WorkflowBuilder(Version=2.6.3)
GroupWorkflow TwoToneExperiment
    IntProperty(Value=-1)
    -> Disable IgnoreElements
    -> BehaviorSubject Trial

    PropertySource<StateTransition,StateId>(MemberName=Id, Value=ITI)
    -> IgnoreElements
    -> BehaviorSubject State

    SubscribeSubject PreviousResponse
    -> DelaySubscription(DueTime=PT0.001S) => #7
    ExternalizedMapping(Count(DisplayName="Number of Trials", Category="Experiment Control")) => #8
    Disable SubscribeSubject StartTrigger => #9
    SubscribeSubject Path
    -> Add(Operand=StringProperty(Value=/ResponseStat.csv))
    -> PropertyMapping(FileName) => #12
    ExternalizedMapping => #13
      HoldPeriod
      "Percentage Left Trials"
      "Pulse Period(ms)"
      "Right Response Window (s)"
      "Right Timeout"
      "Left Response Window"
      "Left Timeout"
      "Lower Left Tone Index"(DisplayName="Lower Left Tone Index", Category="Left Tone")
      "Upper Left Tone Index"(Category="Left Tone")
      "Upper Right Tone Index"(Category="Right Tone")
      "Lower Right Tone Index"(Category="Right Tone")
    #7, #13 -> CreateObservable CreateTrial => #14
        SubscribeSubject TrialDistribution
        -> Bonsai.Numerics.Distributions.Sample
        -> Sink
            SubscribeSubject Trial
            -> Add(Operand=IntProperty(Value=1))
            -> Take(Count=1)
            -> MulticastSubject Trial
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=ITI) => #3
        ExternalizedMapping(HoldPeriod) => #4
        #3, #4 -> SelectMany StartTrial
            SubscribeSubject CenterLick => #0
            ExternalizedMapping(HoldPeriod) => #1
            #0, #1 -> SelectMany HoldPeriod
                ExternalizedMapping(DueTime(DisplayName=HoldPeriod))
                -> Timer(DueTime=PT0.3S, Period=PT0S)
                -> BooleanProperty(Value=true)
                -> GroupWorkflow Proceed => #3
                    WorkflowInput Source1
                    -> WorkflowOutput
                SubscribeSubject CenterExit
                -> BooleanProperty(Value=false)
                -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=IncorrectAction)
                -> GroupWorkflow EarlyExit => #7
                    WorkflowInput Source1
                    -> WorkflowOutput
                #3, #7 -> Merge
                -> First
                -> WorkflowOutput
            -> Condition Proceed
                WorkflowInput Source1
                -> WorkflowOutput
            -> WorkflowOutput
        -> Take(Count=1)
        -> SelectMany SampleTrialType => #7
            SubscribeSubject TrialDistribution
            -> Bonsai.Numerics.Distributions.Sample
            -> WorkflowOutput
        ExternalizedMapping(Value(DisplayName="Percentage Left Trials")) => #8
        #7, #8 -> LessThanOrEqual(Operand=IntProperty(Value=50)) => #9
        -> Condition LeftPort
            WorkflowInput Source1
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Left) => #11
        ExternalizedMapping("Pulse Period(ms)") => #12
        ExternalizedMapping("Right Response Window (s)", DueTime(DisplayName="Right Timeout")) => #13
        ExternalizedMapping("Left Response Window", DueTime(DisplayName="Left Timeout")) => #14
        ExternalizedMapping("Lower Left Tone Index", "Upper Left Tone Index") => #15
        #11, #15 -> SelectMany StimulusPresentation
            WorkflowInput Source1 => #0
            ExternalizedMapping(Lower(DisplayName="Lower Left Tone Index"), Upper(DisplayName="Upper Left Tone Index"))
            -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=2, Upper=2)
            -> Bonsai.Numerics.Distributions.Sample
            -> PropertyMapping(SoundIndex) => #4
            #0, #4 -> IncludeWorkflow(Path=Extensions\PlaySound.bonsai, SoundIndex=2)
            -> MulticastSubject AllToneTick => #6
            SubscribeSubject CenterExit
            -> TrialResponse(Response=EarlyExit)
            -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=EarlyExit)
            -> BooleanProperty(Value=false) => #10
            ExternalizedMapping(DueTime(DisplayName=SoundDuration)) => #11
            #6, #11 -> Delay(DueTime=PT0.1S)
            -> BooleanProperty(Value=true) => #13
            #13, #10 -> TakeUntil
            -> First
            -> WorkflowOutput
        -> Condition CompletedStimulus
            WorkflowInput Source1
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Response) => #18
        #18, #14 -> SelectMany WaitForLick => #19
            ExternalizedMapping(DueTime(DisplayName="Left Response Window"))
            -> Timer(DueTime=PT3S, Period=PT0S)
            -> IntProperty(Value=2) => #2
            SubscribeSubject LeftLick
            -> IntProperty(Value=1) => #4
            SubscribeSubject RightLick
            -> IntProperty(Value=0)
            -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Timeout) => #7
            ExternalizedMapping(DueTime) => #8
            #7, #8 -> Delay(DueTime=PT5S) => #9
            #4, #7 -> TakeUntil => #10
            #2, #7 -> TakeUntil => #11
            #9, #10, #11 -> Merge
            -> First
            -> WorkflowOutput

            SubscribeSubject CenterExit
            -> IncludeWorkflow(Path=Extensions\LogAnnotation.bonsai, Id=Response)
        -> Condition Hit => #20
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        #20, #12 -> GroupWorkflow PulseValve
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName="Pulse Period(ms)")) => #1
            #0, #1 -> IntProperty(Value=100)
            -> Bonsai.Harp.CF.BehaviorCommand(Type=PulsePeriod, Mask=Poke2Valve)
            -> MulticastSubject Commands
            -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke2Valve)
            -> MulticastSubject Commands
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Hit)
        -> TrialResponse(Response=Hit) => #23
        #19 -> Condition Miss
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=2))
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Miss)
        -> TrialResponse(Response=Miss) => #26
        #19 -> Condition IncorrectAction
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=IncorrectAction)
        -> TrialResponse(Response=IncorrectAction) => #29
        #9 -> Condition RightPort
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Right) => #31
        ExternalizedMapping("Upper Right Tone Index", "Lower Right Tone Index") => #32
        #31, #32 -> SelectMany StimulusPresentation
            WorkflowInput Source1 => #0
            ExternalizedMapping(Lower(DisplayName="Lower Right Tone Index"), Upper(DisplayName="Upper Right Tone Index"))
            -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=2, Upper=2)
            -> Bonsai.Numerics.Distributions.Sample
            -> PropertyMapping(SoundIndex) => #4
            #0, #4 -> IncludeWorkflow(Path=Extensions\PlaySound.bonsai, SoundIndex=6)
            -> MulticastSubject AllToneTick => #6
            SubscribeSubject CenterExit
            -> TrialResponse(Response=EarlyExit)
            -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=EarlyExit)
            -> BooleanProperty(Value=false) => #10
            ExternalizedMapping(DueTime(DisplayName=SoundDuration)) => #11
            #6, #11 -> Delay(DueTime=PT0.1S)
            -> BooleanProperty(Value=true) => #13
            #13, #10 -> TakeUntil
            -> First
            -> WorkflowOutput
        -> Condition CompletedStimulus
            WorkflowInput Source1
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Response) => #35
        #35, #13 -> SelectMany WaitForLick => #36
            ExternalizedMapping(DueTime(DisplayName="Right Response Window (s)"))
            -> Timer(DueTime=PT3S, Period=PT0S)
            -> IntProperty(Value=2) => #2
            SubscribeSubject RightLick
            -> IntProperty(Value=1) => #4
            SubscribeSubject LeftLick
            -> IntProperty(Value=0)
            -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Timeout) => #7
            ExternalizedMapping(DueTime) => #8
            #7, #8 -> Delay(DueTime=PT5S) => #9
            #4, #7 -> TakeUntil => #10
            #2, #7 -> TakeUntil => #11
            #9, #10, #11 -> Merge
            -> First
            -> WorkflowOutput

            SubscribeSubject CenterExit
            -> IncludeWorkflow(Path=Extensions\LogAnnotation.bonsai, Id=Response)
        -> Condition Hit => #37
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        #37, #12 -> GroupWorkflow PulseValve
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName="Pulse Period(ms)")) => #1
            #0, #1 -> IntProperty(Value=100)
            -> Bonsai.Harp.CF.BehaviorCommand(Type=PulsePeriod, Mask=Poke1Valve)
            -> MulticastSubject Commands
            -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke1Valve)
            -> MulticastSubject Commands
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Hit)
        -> TrialResponse(Response=Hit) => #40
        #36 -> Condition Miss
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=2))
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Miss)
        -> TrialResponse(Response=Miss) => #43
        #36 -> Condition IncorrectAction
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=IncorrectAction)
        -> TrialResponse(Response=IncorrectAction) => #46
        #23, #29, #26, #40, #43, #46 -> Merge
        -> FirstOrDefault
        -> WorkflowOutput

        WorkflowInput Source1

        Disable SubscribeSubject Joystick => #51
        Disable SubscribeSubject NoGo => #52
        #51, #52 -> Disable SubscribeWhen => #53
        -> Disable Take(Count=1) => #54
        #53, #54 -> Disable CombineLatest
        -> Disable Subtract
        -> Disable Bonsai.Numerics.Abs => #57
        Disable ExternalizedMapping(Value(DisplayName="NoGo Threshold")) => #58
        #57, #58 -> Disable GreaterThan(Operand=DoubleProperty(Value=5))
        -> Disable Condition Movement
            WorkflowInput Source1
            -> WorkflowOutput
        -> Disable PublishSubject NoGoThreshold
    #14, #9 -> Disable SubscribeWhen => #15
    #15, #8 -> Take(Count=1000)
    -> Concat
    -> MulticastSubject PreviousResponse
    -> PublishSubject ResponseStatistics => #19
    #19, #12 -> Bonsai.IO.CsvWriter(FileName=Data\Test\2022-05-27T17-12-48/ResponseStat.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=true)
    -> Disable LastOrDefault
    -> Disable Delay(DueTime=PT1S)
    -> WorkflowOutput

    SubscribeSubject State
    -> IncludeWorkflow Timestamp(Path=Extensions\WithLatestTimestamp.bonsai)
    -> InputMapping(Id(Selector=Value), ElapsedTime(Selector=Timestamp)) => #26
    SubscribeSubject Trial
    -> PropertyMapping(Trial) => #28
    Source1=#26, Source1=#28 -> StateTransition(Trial=6, Id=LickLeft, ElapsedTime=113222.421632) => #29
    -> SampleState
    -> StateStatistics
    -> PublishSubject TrialStatistics
    #29 -> DistinctUntilStateChanged => #33
    SubscribeSubject Path
    -> Add(Operand=StringProperty(Value=/StateTransitions.csv))
    -> PropertyMapping(FileName) => #36
    #33, #36 -> Bonsai.IO.CsvWriter(FileName=Data\Test\2022-05-27T17-12-48/StateTransitions.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=true)

    Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=100)
    -> AsyncSubject TrialDistribution

    PropertySource<TrialResponse,ResponseId>(MemberName=Result, Value=Hit)
    -> BehaviorSubject PreviousResponse

    SubscribeSubject Sounds
    -> Bonsai.Harp.Parse(Type=U16, IsArray=false) => #44
    SubscribeSubject Path
    -> Add(Operand=StringProperty(Value=/sounds.csv))
    -> PropertyMapping(FileName) => #47
    #44, #47 -> Bonsai.IO.CsvWriter(FileName=Data\Test\2022-05-27T17-12-48/sounds.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)

    ExternalizedMapping(Value(DisplayName=Path, Category="Experiment Control"))
    -> PropertySource<Bonsai.IO.EnumerateFiles,System.String>(MemberName=Path, Value=Data\Test)
    -> Timestamp
    -> Format(Format={0}\{1:yyyy-MM-ddTHH-mm-ss}, Selector="Value,Timestamp")
    -> BehaviorSubject Path

    Disable IncludeWorkflow(Path=Extensions\SoftSoundCard.bonsai)
    Disable IncludeWorkflow(Path=Extensions\ManualCamera.bonsai)
    Disable IncludeWorkflow(Path=Extensions\HarpCamera.bonsai)

    PropertySource<StateTransition,StateId>(MemberName=Id, Value=Annotation)
    -> IgnoreElements
    -> BehaviorSubject Annotation

    Disable IncludeWorkflow(Path=Extensions\SoftJoystick.bonsai)

    ExternalizedMapping
      "Behavior Port"(Category="Behavior Board")
      "Center Port"(Category="Behavior Board")
      "Left Port"(Category="Behavior Board")
      "Right Port"(Category="Behavior Board")
    -> GroupWorkflow HarpBehavior
        SubscribeSubject Commands => #0
        SubscribeSubject Path
        -> Add(Operand=StringProperty(Value=/Joystick.bin))
        -> PropertyMapping(Path) => #3
        ExternalizedMapping(PortName(DisplayName="Behavior Port")) => #4
        #0, #4 -> Bonsai.Harp.Device(DeviceState=Active, DumpRegisters=true, LedState=On, VisualIndicators=On, Heartbeat=Disable, IgnoreErrors=false, PortName=COM3) => #5
        -> Bonsai.Harp.Parse(Type=Timestamp, IsArray=false)
        -> PublishSubject Timestamp
        #5 -> Bonsai.Harp.CF.BehaviorEvent(Type=Input, Mask=Port0)
        -> PublishSubject StartTrigger
        ExternalizedMapping(Mask(DisplayName="Center Port")) => #10
        #5, #10 -> Bonsai.Harp.CF.BehaviorEvent(Type=Input, Mask=Poke0InfraRedBeam)
        -> PublishSubject Center
        ExternalizedMapping(Mask(DisplayName="Left Port")) => #13
        #5, #13 -> Bonsai.Harp.CF.BehaviorEvent(Type=Input, Mask=Poke2InfraRedBeam)
        -> PublishSubject Left
        ExternalizedMapping(Mask(DisplayName="Right Port")) => #16
        #5, #16 -> Bonsai.Harp.CF.BehaviorEvent(Type=Input, Mask=Poke1InfraRedBeam)
        -> PublishSubject Right
        #5 -> MemberSelector(Selector=MessageBytes) => #19
        #19, #3 -> Bonsai.Dsp.MatrixWriter(Path=Data\Test\2022-05-27T17-12-48/Joystick.bin, Suffix=None, Overwrite=false, Layout=ColumnMajor)

        Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=32, PayloadType=U8, Payload=0)
        -> IgnoreElements
        -> BehaviorSubject Commands

    ExternalizedMapping(PortName(DisplayName="Soundcard COMPort", Category=Soundcard))
    -> GroupWorkflow HarpSoundCard
        SubscribeSubject Sounds => #0
        SubscribeSubject Path
        -> Add(Operand=StringProperty(Value=/soundcard.bin))
        -> PropertyMapping(Path) => #3
        ExternalizedMapping(PortName) => #4
        #0, #4 -> Bonsai.Harp.Device(DeviceState=Active, DumpRegisters=true, LedState=On, VisualIndicators=On, Heartbeat=Disable, IgnoreErrors=false, PortName=COM4)
        -> MemberSelector(Selector=MessageBytes) => #6
        #6, #3 -> Bonsai.Dsp.MatrixWriter(Path=Data\Test\2022-05-27T17-12-48/soundcard.bin, Suffix=None, Overwrite=false, Layout=ColumnMajor)

        Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=32, PayloadType=U8, Payload=0)
        -> IgnoreElements
        -> BehaviorSubject Sounds

    BehaviorSubject<Bonsai.Harp.HarpMessage> AllToneTick

    SubscribeSubject Center
    -> Equal(Operand=BooleanProperty(Value=true))
    -> Condition Movement
        WorkflowInput Source1
        -> WorkflowOutput
    -> PublishSubject CenterLick

    SubscribeSubject Left
    -> Equal(Operand=BooleanProperty(Value=true))
    -> Condition Movement
        WorkflowInput Source1
        -> WorkflowOutput
    -> PublishSubject LeftLick

    SubscribeSubject Right
    -> Equal(Operand=BooleanProperty(Value=true))
    -> Condition Movement
        WorkflowInput Source1
        -> WorkflowOutput
    -> PublishSubject RightLick

    SubscribeSubject Center
    -> Equal(Operand=BooleanProperty(Value=false))
    -> Condition Exit
        WorkflowInput Source1
        -> WorkflowOutput
    -> PublishSubject CenterExit

    SubscribeSubject CenterLick
    -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=LickCenter)

    SubscribeSubject LeftLick
    -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=LickLeft)

    SubscribeSubject RightLick
    -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=LickRight)

    ExternalizedMapping(TestPulse(Category="Test Valves"), TestValve(Category="Test Valves")) => #88
    ExternalizedMapping(Filter(DisplayName="Key ValveTest", Category="Test Valves"))
    -> Bonsai.Windows.Input.KeyDown(Filter="LButton A Shift", SuppressRepetitions=false) => #90
    #90, #88 -> GroupWorkflow PulseValve
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value(DisplayName=TestPulse)) => #1
        #0, #1 -> IntProperty(Value=1000) => #2
        ExternalizedMapping(Mask(DisplayName=TestValve)) => #3
        #2, #3 -> Bonsai.Harp.CF.BehaviorCommand(Type=PulsePeriod, Mask=Poke2Valve)
        -> MulticastSubject Commands => #5
        #5, #3 -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke2Valve)
        -> MulticastSubject Commands
        -> WorkflowOutput

SubscribeSubject TrialStatistics

GroupWorkflow ResponseStatistics
    SubscribeSubject ResponseStatistics => #0
    ExternalizedMapping(Count) => #1
    #0, #1 -> Buffer(Count=20, Skip=1) => #2
    #0, #1 -> Take(Count=20)
    -> IncrementalBuffer => #4
    #2, #4 -> Merge
    -> Visualizer "Response Stat"
        WorkflowInput Source1
        -> TwoAfcStatistics
        -> WorkflowOutput
    -> WorkflowOutput

Disable GroupWorkflow CameraVisualizer
    SubscribeSubject Camera => #0
    ExternalizedMapping(Value(DisplayName=VisualizerFramerate))
    -> FloatProperty(Value=20)
    -> Bonsai.Scripting.ExpressionTransform
      Expression: TimeSpan.FromSeconds(1/it)
    -> PropertyMapping(Interval) => #4
    #0, #4 -> GateInterval(Interval=PT0.05S)
    -> WorkflowOutput

Disable GroupWorkflow JoystickVisualizer
    SubscribeSubject LeftLick
    -> SampleInterval(Interval=PT0.02S)
    -> GroupWorkflow "TrialGraph - Time (sec)"
        WorkflowInput Source1
        -> Visualizer TrialGraph
            WorkflowInput Source1
            -> GroupWorkflow WithTrialTimestamp
                WorkflowInput Source1 => #0
                ExternalizedMapping(Name)
                -> SubscribeSubject Timestamp => #2
                -> Take(Count=1) => #3
                #2, #3 -> CombineLatest
                -> Subtract => #5
                #0, #5 -> WithLatestFrom => #6
                SubscribeSubject CenterLick => #7
                SubscribeSubject LeftLick => #8
                SubscribeSubject RightLick => #9
                DoubleProperty(Value=0)
                -> First => #11
                SubscribeSubject LeftLick
                -> DoubleProperty(Value=40)
                -> First => #14
                #11, #14 -> Concat
                -> Repeat => #16
                #6, #7, #8, #9, #16 -> CombineLatest
                -> Bonsai.Scripting.ExpressionTransform
                  Expression:
                    new(
                    Item1.Item2 as Timestamp,
                    Item1.Item1 as Value,
                    Item2 as Threshold,
                    Item3 as ITIUpper,
                    Item4 as ITILower,
                    Item5 as NoGoToneTick)
                -> WorkflowOutput

                SubscribeSubject AllToneTick
                -> PublishSubject ToneTick
            -> Bonsai.Design.Visualizers.RollingGraphBuilder(IndexSelector=Timestamp, ValueSelector="Value,Threshold,ITIUpper,ITILower,NoGoToneTick", Capacity=1000)
            -> WorkflowOutput
        -> WorkflowOutput
    -> WorkflowOutput

ExternalizedMapping(FileName) => #5
ExternalizedMapping(Index)
-> Bonsai.Video.VideoCaptureDevice(Index=0, CaptureProperties(CameraProperty(Property=Exposure, Value=-5, ControlFlags=Auto), CameraProperty(Property=Focus, Value=0, ControlFlags=Auto))) => #7
#7, #5 -> Bonsai.Vision.VideoWriter
  FileName=Data\Test\RawVideo.avi
  Suffix=Timestamp
  Buffered=true
  Overwrite=false
  FourCC=FMP4
  FrameRate=30
  FrameSize(Width=0, Height=0)
  ResizeInterpolation=NearestNeighbor
