WorkflowBuilder(Version=2.8.1)
GroupWorkflow TwoToneExperiment
    IntProperty(Value=-1)
    -> Disable IgnoreElements
    -> BehaviorSubject Trial

    PropertySource<StateTransition,StateId>(MemberName=Id, Value=ITI)
    -> IgnoreElements
    -> BehaviorSubject State

    ExternalizedMapping("Joystick Threshold"(Category="Joystick Parameters"))
    -> GroupWorkflow JoystickResponse => #7
        SubscribeSubject Joystick => #0
        ExternalizedMapping(Value(DisplayName="Joystick Threshold", Category="Joystick Properties"))
        -> FloatProperty(Value=0.02)
        -> BehaviorSubject JoystickThreshold => #3
        #0, #3 -> CombineLatest
        -> GreaterThan
        -> DistinctUntilChanged
        -> Condition Movement
            WorkflowInput Source1
            -> WorkflowOutput
        -> WorkflowOutput
    ExternalizedMapping(Value(DisplayName=ResponseType, Description="False=Lick True=Joystick", Category="Experiment Control"))
    -> BooleanProperty(Value=true) => #9
    -> Condition => #10
        WorkflowInput Source1
        -> WorkflowOutput
    #7, #10 -> SubscribeWhen => #11
    SubscribeSubject Lick
    -> MemberSelector(Selector=Value) => #13
    #9 -> Condition => #14
        WorkflowInput Source1
        -> BitwiseNot
        -> WorkflowOutput
    #13, #14 -> SubscribeWhen => #15
    #11, #15 -> Merge
    -> PropertySource<StateTransition,StateId>(MemberName=Id, Value=Joystick)
    -> PublishSubject Threshold

    SubscribeSubject PreviousResponse
    -> DelaySubscription(DueTime=PT0.001S) => #20
    ExternalizedMapping => #21
      RewardTone
      MissTone
      "Lower Bound ITI Duration "
      "Upper Bound ITI Duration"
      "Go Response Window (s)"
      "NoGo Response Window (s)"
      GoSound
      "Pulse Period(ms)"
      "Timeout Duration"(DisplayName="Response Timeout", Category="Timeout Properties")
      "NoGo Threshold"(Category="Joystick Parameters")
      "Pull Timeout"(DisplayName="Pull Timeout", Category="Timeout Properties")
      Value(DisplayName="Percentage Go Trials", Category="Experiment Control")
    #20, #21 -> CreateObservable CreateTrial => #22
        SubscribeSubject TrialDistribution
        -> Bonsai.Numerics.Distributions.Sample
        -> Sink
            SubscribeSubject Trial
            -> Add(Operand=IntProperty(Value=1))
            -> Take(Count=1)
            -> MulticastSubject Trial
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=ITI) => #3
        ExternalizedMapping
          Lower(DisplayName="Lower Bound ITI Duration ", Category="ITI Duration (sec)")
          Upper(DisplayName="Upper Bound ITI Duration", Category="ITI Duration (sec)")
        -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=2, Upper=3)
        -> Bonsai.Numerics.Distributions.Sample
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime) => #8
        #3, #8 -> Delay(DueTime=PT2.793S) => #9
        SubscribeSubject PenaltyThreshold => #10
        Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=2.5, Upper=3.5)
        -> Bonsai.Numerics.Distributions.Sample
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime) => #14
        #10, #14 -> GroupWorkflow DummyInitialValue => #15
            DoubleProperty(Value=0)
            -> First => #1
            -> BooleanProperty(Value=true) => #2
            WorkflowInput Source1 => #3
            -> BooleanProperty(Value=true) => #4
            #2, #4 -> Concat => #5
            ExternalizedMapping(DueTime) => #6
            #5, #6 -> Throttle(DueTime=PT3.488S) => #7
            #3 -> BooleanProperty(Value=false) => #8
            #1 -> BooleanProperty(Value=false) => #9
            #7, #8, #9 -> Merge
            -> WorkflowOutput
        #9, #15 -> CombineLatest
        -> Condition ReadyToGo
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> WorkflowOutput
        -> Take(Count=1)
        -> MemberSelector(Selector=Item1) => #19
        ExternalizedMapping(Value) => #20
        #19, #20 -> LessThanOrEqual(Operand=IntProperty(Value=0)) => #21
        -> Condition GoTrial
            WorkflowInput Source1
            -> WorkflowOutput
        -> Disable SelectMany
            Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=100)
            -> Bonsai.Numerics.Distributions.Sample
            -> GreaterThan(Operand=IntProperty(Value=0)) => #2
            -> Condition PulseOn
                WorkflowInput Source1
                -> WorkflowOutput
            -> GroupWorkflow
                WorkflowInput Source1
                -> Bonsai.Harp.CF.BehaviorCommand(Type=StartPwm, Mask=Digital1)
                -> MulticastSubject Commands
                -> Delay(DueTime=PT0.05S)
                -> Bonsai.Harp.CF.BehaviorCommand(Type=StopPwm, Mask=Digital1)
                -> MulticastSubject Commands
                -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Blink)
                -> Disable RepeatCount(Count=1)
                -> WorkflowOutput
            -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Blink) => #5
            #2 -> Condition NoPulse
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> IncludeWorkflow(Path=Extensions\ClearOutput.bonsai, Mask=Digital0) => #7
            #5, #7 -> Merge
            -> WorkflowOutput
        -> Disable IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Go)
        -> Disable IncludeWorkflow(Path=Extensions\SetOutput.bonsai, Mask=Digital0) => #25
        Disable ExternalizedMapping(Value(DisplayName="Response Delay (ms)", Category="Response Window Settings"))
        -> Disable DoubleProperty(Value=0)
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromMilliseconds(it)
        -> Disable PropertyMapping(DueTime) => #29
        ExternalizedMapping(GoSound(Category="Tone Properties")) => #30
        Source1=#25, Source1=#29, Source3=#30 -> SelectMany StimulusPresentation
            SubscribeSubject Threshold
            -> TrialResponse(Response=EarlyResponse)
            -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=EarlyResponse)
            -> BooleanProperty(Value=false) => #3
            ExternalizedMapping(DueTime(DisplayName="Early Response Penalty")) => #4
            #3, #4 -> Delay(DueTime=PT0S) => #5
            WorkflowInput Source1
            -> PublishSubject LaserOn
            -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Go) => #8
            ExternalizedMapping(SoundIndex(DisplayName=GoSound)) => #9
            #8, #9 -> IncludeWorkflow(Path=Extensions\PlaySound.bonsai, SoundIndex=3)
            -> MulticastSubject AllToneTick
            -> Disable Delay(DueTime=PT0.1S) => #12
            ExternalizedMapping(DueTime) => #13
            #12, #13 -> Delay(DueTime=PT0S)
            -> BooleanProperty(Value=true) => #15
            #15, #3 -> TakeUntil => #16
            #5, #16 -> Merge
            -> First
            -> WorkflowOutput
        -> Condition CompletedStimulus
            WorkflowInput Source1
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Response)
        -> Disable IncludeWorkflow(Path=Extensions\ClearOutput.bonsai, Mask=Digital0) => #34
        ExternalizedMapping("Go Response Window (s)"(Category="Response Window Settings"), DueTime(DisplayName="Pull Timeout")) => #35
        #34, #35 -> SelectMany Move => #36
            SubscribeSubject PullThreshold
            -> IntProperty(Value=0)
            -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Timeout) => #2
            ExternalizedMapping(DueTime) => #3
            #2, #3 -> Delay(DueTime=PT0.5S) => #4
            SubscribeSubject Threshold
            -> IntProperty(Value=1) => #6
            #6, #2 -> TakeUntil => #7
            ExternalizedMapping(DueTime(DisplayName="Go Response Window (s)"))
            -> Timer(DueTime=PT2S, Period=PT0S)
            -> IntProperty(Value=2) => #10
            #10, #2 -> TakeUntil => #11
            #4, #7, #11 -> Merge
            -> First
            -> WorkflowOutput
        -> Condition Hit => #37
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        ExternalizedMapping("Pulse Period(ms)"(Category="Solenoid Properties")) => #38
        #37, #38 -> GroupWorkflow A => #39
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName="Pulse Period(ms)")) => #1
            #0, #1 -> IntProperty(Value=60)
            -> Bonsai.Harp.CF.BehaviorCommand(Type=PulsePeriod, Mask=Poke0Valve)
            -> MulticastSubject Commands
            -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke0Valve)
            -> MulticastSubject Commands
            -> WorkflowOutput
        ExternalizedMapping(SoundIndex(DisplayName=RewardTone, Category="Tone Properties")) => #40
        #39, #40 -> IncludeWorkflow(Path=Extensions\PlaySound.bonsai, SoundIndex=20)
        -> TrialResponse(Response=Hit)
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Hit) => #43
        #36 -> Condition Miss
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=2))
            -> WorkflowOutput
        -> TrialResponse(Response=Miss)
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Miss) => #46
        #21 -> Condition NoGoTrial
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> AsyncSubject NoGo
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=NoGo)
        -> Disable IncludeWorkflow(Path=Extensions\SetOutput.bonsai, Mask=Digital1) => #50
        Source1=#29, Source1=#50 -> SelectMany StimulusPresentation
            SubscribeSubject Threshold
            -> TrialResponse(Response=EarlyResponse)
            -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=EarlyResponse)
            -> BooleanProperty(Value=false) => #3
            WorkflowInput Source1
            -> PublishSubject LaserOn
            -> GroupWorkflow PulseValve
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName="Pulse Period(ms)")) => #1
                #0, #1 -> IntProperty(Value=30) => #2
                ExternalizedMapping(Mask) => #3
                #2, #3 -> Bonsai.Harp.CF.BehaviorCommand(Type=PulsePeriod, Mask=Poke0Valve)
                -> MulticastSubject Commands2 => #5
                #5, #3 -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke0Valve)
                -> MulticastSubject Commands2
                -> WorkflowOutput
            -> MulticastSubject AllToneTick
            -> Disable Delay(DueTime=PT0.1S) => #8
            ExternalizedMapping(DueTime) => #9
            #8, #9 -> Delay(DueTime=PT0S)
            -> BooleanProperty(Value=true) => #11
            #3, #11 -> Merge
            -> First
            -> WorkflowOutput
        -> Condition CompletedStimulus
            WorkflowInput Source1
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Response)
        -> Disable IncludeWorkflow(Path=Extensions\ClearOutput.bonsai, Mask=Digital1) => #54
        ExternalizedMapping("NoGo Response Window (s)"(Category="Response Window Settings")) => #55
        #54, #55 -> SelectMany DontMove => #56
            SubscribeSubject NoGoThreshold
            -> DistinctUntilChanged
            -> PropertySource<StateTransition,StateId>(MemberName=Id, Value=Joystick)
            -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
            -> BooleanProperty(Value=false) => #4
            ExternalizedMapping(DueTime(DisplayName="NoGo Response Window (s)"))
            -> Timer(DueTime=PT2S, Period=PT0S)
            -> BooleanProperty(Value=true) => #7
            #4, #7 -> Merge
            -> First
            -> WorkflowOutput
        -> Condition CorrectRejection
            WorkflowInput Source1
            -> WorkflowOutput
        -> TrialResponse(Response=CorrectRejection)
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=CorrectRejection) => #59
        #56 -> Condition FalseAlarm => #60
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        ExternalizedMapping(SoundIndex(DisplayName=MissTone, Category="Tone Properties")) => #61
        #60, #61 -> IncludeWorkflow(Path=Extensions\PlaySound.bonsai, SoundIndex=21)
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Timeout) => #63
        ExternalizedMapping(DueTime(DisplayName="Timeout Duration", Category="Timeout Properties")) => #64
        #63, #64 -> SelectMany FalseAlarmPenalty
            WorkflowInput Source1 => #0
            ExternalizedMapping(DueTime) => #1
            #0, #1 -> Delay(DueTime=PT6S)
            -> WorkflowOutput
        -> TrialResponse(Response=FalseAlarm)
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=FalseAlarm) => #67
        #36 -> Condition PullPenalty
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> TrialResponse(Response=PullPenalty)
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=PullPenalty) => #70
        #43, #46, #59, #67, #70 -> Merge
        -> FirstOrDefault
        -> WorkflowOutput

        WorkflowInput Source1

        SubscribeSubject Joystick => #75
        SubscribeSubject NoGo => #76
        #75, #76 -> SubscribeWhen => #77
        -> Take(Count=1) => #78
        #77, #78 -> CombineLatest
        -> Subtract
        -> Bonsai.Numerics.Abs => #81
        ExternalizedMapping(Value(DisplayName="NoGo Threshold")) => #82
        #81, #82 -> GreaterThan(Operand=DoubleProperty(Value=0.02))
        -> Condition Movement
            WorkflowInput Source1
            -> WorkflowOutput
        -> PublishSubject NoGoThreshold
    Disable SubscribeSubject StartTrigger => #23
    #22, #23 -> Disable SubscribeWhen => #24
    ExternalizedMapping(Count(DisplayName="Number of Trials", Category="Experiment Control")) => #25
    #24, #25 -> Take(Count=300)
    -> Concat
    -> MulticastSubject PreviousResponse
    -> PublishSubject ResponseStatistics => #29
    SubscribeSubject Path
    -> Add(Operand=StringProperty(Value=/ResponseStat.csv))
    -> PropertyMapping(FileName) => #32
    #29, #32 -> Bonsai.IO.CsvWriter
      FileName=C:\Users\SippylabJan\Desktop\BehaviorData/Shriya/LickTask/SP001_LickTask_2023-10-20T10-58-30/ResponseStat.csv
      Append=false
      Overwrite=false
      Suffix=None
      IncludeHeader=true
    -> Disable LastOrDefault
    -> Disable Delay(DueTime=PT1S)
    -> WorkflowOutput

    SubscribeSubject State
    -> IncludeWorkflow Timestamp(Path=Extensions\WithLatestTimestamp.bonsai)
    -> InputMapping(Id(Selector=Value), ElapsedTime(Selector=Timestamp)) => #39
    SubscribeSubject Trial
    -> PropertyMapping(Trial) => #41
    Source1=#39, Source1=#41 -> StateTransition(Trial=7, Id=Blink, ElapsedTime=4832727.648128) => #42
    -> SampleState
    -> StateStatistics
    -> PublishSubject TrialStatistics
    #42 -> DistinctUntilStateChanged => #46
    SubscribeSubject Path
    -> Add(Operand=StringProperty(Value=/GoTone_StateTransitions.csv))
    -> PropertyMapping(FileName) => #49
    #46, #49 -> Bonsai.IO.CsvWriter
      FileName=C:\Users\SippylabJan\Desktop\BehaviorData/Shriya/LickTask/SP001_LickTask_2023-10-20T10-58-30/GoTone_StateTransitions.csv
      Append=false
      Overwrite=false
      Suffix=None
      IncludeHeader=true

    SubscribeSubject Threshold
    -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Joystick)

    SubscribeSubject Lick
    -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Lick)

    Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=100)
    -> AsyncSubject TrialDistribution

    PropertySource<TrialResponse,ResponseId>(MemberName=Result, Value=Hit)
    -> BehaviorSubject PreviousResponse

    SubscribeSubject Sounds
    -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=U16, IsArray=false)) => #61
    SubscribeSubject Path
    -> Add(Operand=StringProperty(Value=/sounds.csv))
    -> PropertyMapping(FileName) => #64
    #61, #64 -> Bonsai.IO.CsvWriter
      FileName=C:\Users\SippylabJan\Desktop\BehaviorData/Shriya/LickTask/SP001_LickTask_2023-10-20T10-58-30/sounds.csv
      Append=false
      Overwrite=false
      Suffix=None
      IncludeHeader=false

    Disable IncludeWorkflow(Path=Extensions\SoftSoundCard.bonsai)
    Disable IncludeWorkflow(Path=Extensions\ManualCamera.bonsai)
    Disable IncludeWorkflow(Path=Extensions\HarpCamera.bonsai)

    PropertySource<StateTransition,StateId>(MemberName=Id, Value=Annotation)
    -> IgnoreElements
    -> BehaviorSubject Annotation

    SubscribeSubject Joystick => #72
    ExternalizedMapping(Value(DisplayName="ITI Lower Threshold", Category="Joystick Parameters"))
    -> FloatProperty(Value=-0.02)
    -> BehaviorSubject ITILower => #75
    #72, #75 -> CombineLatest
    -> LessThan => #77
    ExternalizedMapping(Value(DisplayName="ITI Upper Threshold", Category="Joystick Parameters"))
    -> FloatProperty(Value=0.02)
    -> BehaviorSubject ITIUpper => #80
    #72, #80 -> CombineLatest
    -> GreaterThan => #82
    #77, #82 -> Zip
    -> LogicalOr
    -> Condition Movement
        WorkflowInput Source1
        -> WorkflowOutput
    -> PublishSubject PenaltyThreshold

    SubscribeSubject Joystick => #87
    ExternalizedMapping(Value(DisplayName="Pull Threshold", Category="Joystick Parameters")) => #88
    #87, #88 -> LessThan(Operand=DoubleProperty(Value=-0.02))
    -> Condition Movement
        WorkflowInput Source1
        -> WorkflowOutput
    -> PublishSubject PullThreshold

    ExternalizedMapping(PortName(DisplayName="Behavior COMPort", Category="Experiment Control"))
    -> GroupWorkflow HarpJoystick
        SubscribeSubject Commands => #0
        ExternalizedMapping(PortName) => #1
        #0, #1 -> Bonsai.Harp.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM3) => #2
        -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=Timestamp, IsArray=false))
        -> PublishSubject Timestamp
        #2 -> Bonsai.Harp.CF.BehaviorEvent(Type=QuadratureCounter, Mask=Port2)
        -> PublishSubject Touch
        #2 -> Bonsai.Harp.CF.BehaviorEvent(Type=AnalogInput, Mask=Port1)
        -> PublishSubject Joystick
        #2 -> Bonsai.Harp.CF.BehaviorEvent(Type=Input, Mask=Poke1InfraRedBeam)
        -> PublishSubject Reward
        #2 -> Bonsai.Harp.CF.BehaviorEvent(Type=RegisterInputs, Mask=Port1)
        -> PublishSubject StartTrigger
        #2 -> MemberSelector(Selector=MessageBytes) => #13
        SubscribeSubject Path
        -> Add(Operand=StringProperty(Value=/Joystick.bin))
        -> PropertyMapping(Path) => #16
        #13, #16 -> Bonsai.Dsp.MatrixWriter
          Path=C:\Users\SippylabJan\Desktop\BehaviorData/Shriya/LickTask/SP001_LickTask_2023-10-20T10-58-30/Joystick.bin
          Suffix=None
          Overwrite=false
          Layout=ColumnMajor

        Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=32, PayloadType=U8, Payload=0)
        -> IgnoreElements
        -> BehaviorSubject Commands

        SubscribeSubject Touch
        -> Bonsai.Numerics.Abs
        -> GreaterThan(Operand=DoubleProperty(Value=0.015))
        -> DistinctUntilChanged
        -> Condition TouchDetect
            WorkflowInput Source1
            -> WorkflowOutput
        -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
        -> PublishSubject Lick

    ExternalizedMapping(PortName(DisplayName="Soundcard COMPort", Category="Experiment Control"))
    -> GroupWorkflow HarpSoundCard
        SubscribeSubject Sounds => #0
        ExternalizedMapping(PortName) => #1
        #0, #1 -> Bonsai.Harp.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM4)
        -> MemberSelector(Selector=MessageBytes) => #3
        SubscribeSubject Path
        -> Add(Operand=StringProperty(Value=/soundcard.bin))
        -> PropertyMapping(Path) => #6
        #3, #6 -> Bonsai.Dsp.MatrixWriter
          Path=C:\Users\SippylabJan\Desktop\BehaviorData/Shriya/LickTask/SP001_LickTask_2023-10-20T10-58-30/soundcard.bin
          Suffix=None
          Overwrite=false
          Layout=ColumnMajor

        Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=32, PayloadType=U8, Payload=0)
        -> IgnoreElements
        -> BehaviorSubject Sounds

    ExternalizedMapping(PortName(DisplayName="Behavior2 COMPort", Category="Experiment Control"))
    -> GroupWorkflow HarpBehavior2
        BehaviorSubject<Bonsai.Harp.HarpMessage> Commands2 => #0
        ExternalizedMapping(PortName) => #1
        #0, #1 -> Bonsai.Harp.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM5) => #2
        -> WorkflowOutput
        #2 -> MemberSelector(Selector=MessageBytes) => #4
        SubscribeSubject Path
        -> Add(Operand=StringProperty(Value=/LightAndPuff.bin))
        -> PropertyMapping(Path) => #7
        #4, #7 -> Bonsai.Dsp.MatrixWriter
          Path=C:\Users\SippylabJan\Desktop\BehaviorData/Shriya/LickTask/SP001_LickTask_2023-10-20T10-58-30/LightAndPuff.bin
          Suffix=None
          Overwrite=false
          Layout=ColumnMajor

    BehaviorSubject<Bonsai.Harp.HarpMessage> AllToneTick
    Disable IncludeWorkflow(Path=Extensions\SoftJoystick.bonsai)

    Bonsai.Windows.Input.KeyDown(Filter="LButton A Shift", SuppressRepetitions=false)
    -> GroupWorkflow PulseValve
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value(DisplayName="Pulse Period(ms)")) => #1
        #0, #1 -> IntProperty(Value=20)
        -> Bonsai.Harp.CF.BehaviorCommand(Type=PulsePeriod, Mask=Poke0Valve)
        -> MulticastSubject Commands
        -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke0Valve)
        -> MulticastSubject Commands
        -> WorkflowOutput
    -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Annotation)

SubscribeSubject TrialStatistics

GroupWorkflow ResponseStatistics
    SubscribeSubject ResponseStatistics => #0
    ExternalizedMapping(Count) => #1
    #0, #1 -> BufferCount(Count=20, Skip=1) => #2
    #0, #1 -> Take(Count=20)
    -> IncrementalBuffer => #4
    #2, #4 -> Merge
    -> Visualizer "Response Stat"
        WorkflowInput Source1
        -> ResponseStatistics
        -> WorkflowOutput
    -> WorkflowOutput

Disable GroupWorkflow CameraVisualizer
    SubscribeSubject Camera => #0
    ExternalizedMapping(Value(DisplayName=VisualizerFramerate))
    -> FloatProperty(Value=20)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromSeconds(1/it)
    -> PropertyMapping(Interval) => #4
    #0, #4 -> GateInterval(Interval=PT0.05S)
    -> WorkflowOutput

GroupWorkflow JoystickVisualizer
    SubscribeSubject Joystick
    -> SampleInterval(Interval=PT0.02S)
    -> GroupWorkflow "TrialGraph - Time (sec)"
        WorkflowInput Source1
        -> Visualizer TrialGraph
            WorkflowInput Source1
            -> GroupWorkflow WithTrialTimestamp
                WorkflowInput Source1 => #0
                ExternalizedMapping(Name)
                -> SubscribeSubject Timestamp => #2
                -> Take(Count=1) => #3
                #2, #3 -> CombineLatest
                -> Subtract => #5
                #0, #5 -> WithLatestFrom => #6
                SubscribeSubject JoystickThreshold => #7
                SubscribeSubject ITIUpper => #8
                SubscribeSubject ITILower => #9
                DoubleProperty(Value=0)
                -> First => #11
                SubscribeSubject ToneTick => #12
                SubscribeSubject JoystickThreshold
                -> PropertyMapping(Value) => #14
                #12, #14 -> DoubleProperty(Value=0.019999999552965164)
                -> First => #16
                #11, #16 -> Concat
                -> Repeat => #18
                #6, #7, #8, #9, #18 -> CombineLatest
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression:
                    new(
                    Item1.Item2 as Timestamp,
                    Item1.Item1 as Value,
                    Item2 as Threshold,
                    Item3 as ITIUpper,
                    Item4 as ITILower,
                    Item5 as NoGoToneTick)
                -> WorkflowOutput

                SubscribeSubject AllToneTick
                -> PublishSubject ToneTick
            -> Bonsai.Design.Visualizers.RollingGraphBuilder(IndexSelector=Timestamp, ValueSelector="Value,Threshold,ITIUpper,ITILower,NoGoToneTick", SymbolType=None, LineWidth=1, Capacity=1000, Min=nil, Max=nil)
            -> WorkflowOutput
        -> WorkflowOutput
    -> WorkflowOutput

ExternalizedMapping(Index(DisplayName="Camera Index", Category="Camera Settings"))
-> Disable Bonsai.Vision.CameraCapture(Index=0, CaptureProperties="") => #6
ExternalizedMapping(FileName(DisplayName="Video File Name", Category="Camera Settings")) => #7
#6, #7 -> Disable Bonsai.Vision.VideoWriter
  FileName=RawVideo
  Suffix=Timestamp
  Buffered=true
  Overwrite=false
  FourCC=FMP4
  FrameRate=30
  FrameSize(Width=0, Height=0)
  ResizeInterpolation=NearestNeighbor

SubscribeSubject Joystick => #9
-> Visualizer
    WorkflowInput Source1
    -> WorkflowOutput
SubscribeSubject Timestamp => #11
#11, #9 -> CombineLatest => #12
SubscribeSubject Path
-> Add(Operand=StringProperty(Value=/JoystickTrace.csv))
-> PropertyMapping(FileName) => #15
#12, #15 -> Bonsai.IO.CsvWriter
  FileName=C:\Users\SippylabJan\Desktop\BehaviorData/Shriya/LickTask/SP001_LickTask_2023-10-20T10-58-30/JoystickTrace.csv
  Append=false
  Overwrite=false
  Suffix=None
  IncludeHeader=false

Disable SubscribeSubject Path
-> Disable Add(Operand=StringProperty(Value=\Weight.csv))
-> Disable PropertyMapping(FileName) => #19
Disable ExternalizedMapping(Value(DisplayName=StartingWeight))
-> Disable FloatProperty(Value=31) => #21
Disable ExternalizedMapping(Value(DisplayName=Weight))
-> Disable FloatProperty(Value=23.6) => #23
#21, #23 -> Disable CombineLatest => #24
#19, #24 -> Disable Bonsai.IO.CsvWriter
  FileName=C:\Users\SippylabJan\Desktop\BehaviorData\GoNoGoTask/JK103/Pretraining_2022-08-24T11-09-41\Weight.csv
  Append=false
  Overwrite=false
  Suffix=Timestamp
  IncludeHeader=false

ExternalizedMapping(Value(DisplayName=DataPath, Category="Experiment Control"))
-> PropertySource<Bonsai.IO.EnumerateFiles,System.String>(MemberName=Path, Value=C:\Users\SippylabJan\Desktop\BehaviorData) => #27
ExternalizedMapping(Value(DisplayName=ExperimenterId, Category="Experiment Control"))
-> StringProperty(Value=Shriya) => #29
ExternalizedMapping(Value(DisplayName=SubjectId, Category="Experiment Control"))
-> StringProperty(Value=SP001) => #31
ExternalizedMapping(Value(DisplayName=ExperimentName, Category="Experiment Control"))
-> StringProperty(Value=LickTask) => #33
#27, #29, #31, #33 -> Zip
-> Bonsai.Scripting.Expressions.ExpressionTransform
  Expression:
    new(
    Item1 as DataPath,
    Item2 as ExperimenterId,
    Item3 as SubjectId,
    Item4 as ExperimentName)
-> Timestamp
-> GroupWorkflow SessionMetadata
    WorkflowInput Source1
    -> BehaviorSubject SessionManualInfo
    -> Format(Format={0}/{1}/{3}/{2}_{3}_{4:yyyy-MM-ddTHH-mm-ss}, Selector="Value.DataPath,Value.ExperimenterId,Value.SubjectId,Value.ExperimentName,Timestamp")
    -> BehaviorSubject Path

    SubscribeSubject Path => #4
    SubscribeSubject SessionManualInfo => #5
    #4, #5 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1 as Path,
        Item2 as Metadata)
    -> BehaviorSubject SessionMetadata

SubscribeSubject Timestamp => #38
SubscribeSubject Touch => #39
#38, #39 -> CombineLatest => #40
SubscribeSubject Path
-> Add(Operand=StringProperty(Value=/LickTrace.csv))
-> PropertyMapping(FileName) => #43
#40, #43 -> Bonsai.IO.CsvWriter
  FileName=C:\Users\SippylabJan\Desktop\BehaviorData/Shriya/LickTask/SP001_LickTask_2023-10-20T10-58-30/LickTrace.csv
  Append=false
  Overwrite=false
  Suffix=None
  IncludeHeader=false

Bonsai.Video.VideoCaptureDevice => #45
  Index=0
  Format(FrameSize(Width=800, Height=600), AverageFrameRate=60, MaximumFrameRate=60, BitCount=24)
  CaptureProperties(CameraProperty(Property=Exposure, Value=-5, ControlFlags=Auto), CameraProperty(Property=Focus, Value=0, ControlFlags=Auto))
-> IncludeWorkflow Timestamp(Path=Extensions\WithLatestTimestamp.bonsai) => #46
SubscribeSubject Path
-> Add(Operand=StringProperty(Value=/VideoTimestamps.csv))
-> PropertyMapping(FileName) => #49
#46, #49 -> Bonsai.IO.CsvWriter
  FileName=C:\Users\SippylabJan\Desktop\BehaviorData/Shriya/LickTask/SP001_LickTask_2023-10-20T10-58-30/VideoTimestamps.csv
  Append=false
  Overwrite=false
  Suffix=None
  IncludeHeader=false
SubscribeSubject SessionMetadata
-> Format(Format={0}\{1}_{2}_{3:yyyy-MM-ddTHH-mm-ss}.avi, Selector="Path,Metadata.Value.SubjectId,Metadata.Value.ExperimentName,Metadata.Timestamp")
-> PropertyMapping(FileName) => #53
#45, #53 -> Bonsai.Vision.VideoWriter
  FileName=C:\Users\SippylabJan\Desktop\BehaviorData/Shriya/LickTask/SP001_LickTask_2023-10-20T10-58-30\SP001_LickTask_2023-10-20T10-58-30.avi
  Suffix=None
  Buffered=true
  Overwrite=false
  FourCC=FMP4
  FrameRate=30
  FrameSize(Width=0, Height=0)
  ResizeInterpolation=NearestNeighbor

SubscribeSubject StartTrigger
-> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Blink)
