WorkflowBuilder(Version=2.8.1)
SubscribeSubject TaskParameters
-> PropertyMapping
  NumberOfTrials(Selector=ExperimentControl.NumberOfTrials)
  ResponseType(Selector=ExperimentControl.ResponseType)
  "Percentage Go Trials"(Selector=ExperimentControl.PercentageGoTrials)
  "Percentage Catch Trials"(Selector=ExperimentControl.PercentageCatchTrials)
  "Lower Bound ITI Duration "(Selector=ItiDuration.LowerBoundDuration)
  "Upper Bound ITI Duration"(Selector=ItiDuration.UpperBoundDuration)
  "Lower Bound Penalty Duration"(Selector=ItiDuration.LowerBoundPenaltyDuration)
  "Upper Bound Penalty Duration"(Selector=ItiDuration.UpperBoundPenaltyDuration)
  "ITI Lower Threshold"(Selector=JoystickParameters.ItiLowerThreshold)
  "ITI Upper Threshold"(Selector=JoystickParameters.ItiUpperThreshold)
  "Joystick Threshold"(Selector=JoystickParameters.JoystickThreshold)
  "NoGo Threshold"(Selector=JoystickParameters.NoGoThreshold)
  "Pull Threshold"(Selector=JoystickParameters.PullThreshold)
  "Go Response Window (s)"(Selector=ResponseWindowSettings.GoResponseWindow)
  "NoGo Response Window (s)"(Selector=ResponseWindowSettings.NoGoResponseWindow)
  "Pulse Period(ms)"(Selector=SolenoidProperties.PulsePeriod)
  "Pull Timeout"(Selector=TimeoutProperties.PullTimeout)
  "Response Timeout"(Selector=TimeoutProperties.ResponseTimeout)
  GoSound(Selector=ToneProperties.GoSound)
  MissTone(Selector=ToneProperties.MissTone)
  NoGoSound(Selector=ToneProperties.NoGoSound)
  RewardTone(Selector=ToneProperties.RewardTone)
-> GroupWorkflow TwoToneExperiment
    IntProperty(Value=-1)
    -> Disable IgnoreElements
    -> BehaviorSubject Trial

    PropertySource<StateTransition,StateId>(MemberName=Id, Value=ITI)
    -> IgnoreElements
    -> BehaviorSubject State

    ExternalizedMapping("Joystick Threshold"(Category="Joystick Parameters"))
    -> GroupWorkflow JoystickResponse => #7
        SubscribeSubject Joystick => #0
        ExternalizedMapping(Value(DisplayName="Joystick Threshold", Category="Joystick Properties"))
        -> FloatProperty(Value=0.02)
        -> BehaviorSubject JoystickThreshold => #3
        #0, #3 -> CombineLatest
        -> GreaterThan
        -> DistinctUntilChanged
        -> Condition Movement
            WorkflowInput Source1
            -> WorkflowOutput
        -> WorkflowOutput
    ExternalizedMapping(Value(DisplayName=ResponseType, Description="False=Lick True=Joystick", Category="Experiment Control"))
    -> BooleanProperty(Value=true) => #9
    -> Condition => #10
        WorkflowInput Source1
        -> WorkflowOutput
    #7, #10 -> SubscribeWhen => #11
    SubscribeSubject Lick
    -> MemberSelector(Selector=Value) => #13
    #9 -> Condition => #14
        WorkflowInput Source1
        -> BitwiseNot
        -> WorkflowOutput
    #13, #14 -> SubscribeWhen => #15
    #11, #15 -> Merge
    -> PropertySource<StateTransition,StateId>(MemberName=Id, Value=Joystick)
    -> PublishSubject Threshold

    SubscribeSubject PreviousResponse
    -> DelaySubscription(DueTime=PT0.001S) => #20
    ExternalizedMapping => #21
      RewardTone
      MissTone
      "Lower Bound ITI Duration "
      "Upper Bound ITI Duration"
      "Lower Bound Penalty Duration"
      "Upper Bound Penalty Duration"
      "Go Response Window (s)"
      "NoGo Response Window (s)"
      GoSound
      NoGoSound
      "Pulse Period(ms)"
      "Timeout Duration"(DisplayName="Response Timeout", Category="Timeout Properties")
      "NoGo Threshold"(Category="Joystick Parameters")
      "Pull Timeout"(DisplayName="Pull Timeout", Category="Timeout Properties")
      "Percentage Go Trials"(Category="Experiment Control")
      "Percentage Catch Trials"(Category="Experiment Control")
    #20, #21 -> CreateObservable CreateTrial => #22
        SubscribeSubject TrialDistribution
        -> Bonsai.Numerics.Distributions.Sample
        -> Sink
            SubscribeSubject Trial
            -> Add(Operand=IntProperty(Value=1))
            -> Take(Count=1)
            -> MulticastSubject Trial
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=ITI) => #3
        SubscribeSubject Random => #4
        ExternalizedMapping => #5
          Lower(DisplayName="Lower Bound ITI Duration ", Category="ITI Duration (sec)")
          Upper(DisplayName="Upper Bound ITI Duration", Category="ITI Duration (sec)")
        #4, #5 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=5, Upper=7)
        -> Bonsai.Numerics.Distributions.Sample
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime) => #9
        #3, #9 -> Delay(DueTime=PT6.404S) => #10
        SubscribeSubject PenaltyThreshold => #11
        SubscribeSubject Random => #12
        ExternalizedMapping => #13
          Lower(DisplayName="Lower Bound Penalty Duration", Category="Penalty Duration (sec)")
          Upper(DisplayName="Upper Bound Penalty Duration", Category="Penalty Duration (sec)")
        #12, #13 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=2, Upper=4)
        -> Bonsai.Numerics.Distributions.Sample
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime) => #17
        #11, #17 -> GroupWorkflow DummyInitialValue => #18
            DoubleProperty(Value=0)
            -> First => #1
            -> BooleanProperty(Value=true) => #2
            WorkflowInput Source1 => #3
            -> BooleanProperty(Value=true) => #4
            #2, #4 -> Concat => #5
            ExternalizedMapping(DueTime) => #6
            #5, #6 -> Throttle(DueTime=PT3.482S) => #7
            #3 -> BooleanProperty(Value=false) => #8
            #1 -> BooleanProperty(Value=false) => #9
            #7, #8, #9 -> Merge
            -> WorkflowOutput
        #10, #18 -> CombineLatest
        -> Condition ReadyToGo
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> WorkflowOutput
        -> Take(Count=1)
        -> MemberSelector(Selector=Item1) => #22
        ExternalizedMapping(Value(DisplayName="Percentage Go Trials")) => #23
        #22, #23 -> LessThanOrEqual(Operand=IntProperty(Value=100)) => #24
        -> Condition GoTrial
            WorkflowInput Source1
            -> WorkflowOutput
        -> Condition NotCatchTrial
            SubscribeSubject CatchTrial
            -> Equal(Operand=BooleanProperty(Value=false))
            -> WorkflowOutput
        -> Disable SelectMany
            Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=100)
            -> Bonsai.Numerics.Distributions.Sample
            -> GreaterThan(Operand=IntProperty(Value=0)) => #2
            -> Condition PulseOn
                WorkflowInput Source1
                -> WorkflowOutput
            -> GroupWorkflow
                WorkflowInput Source1
                -> Bonsai.Harp.CF.BehaviorCommand(Type=StartPwm, Mask=Digital1)
                -> MulticastSubject Commands
                -> Delay(DueTime=PT0.05S)
                -> Bonsai.Harp.CF.BehaviorCommand(Type=StopPwm, Mask=Digital1)
                -> MulticastSubject Commands
                -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Blink)
                -> Disable RepeatCount(Count=1)
                -> WorkflowOutput
            -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Blink) => #5
            #2 -> Condition NoPulse
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> IncludeWorkflow(Path=Extensions\ClearOutput.bonsai, Mask=Digital0) => #7
            #5, #7 -> Merge
            -> WorkflowOutput
        -> Disable IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Go)
        -> Disable IncludeWorkflow(Path=Extensions\SetOutput.bonsai, Mask=Digital0) => #29
        Disable ExternalizedMapping(Value(DisplayName="Response Delay (ms)", Category="Response Window Settings"))
        -> Disable DoubleProperty(Value=0)
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromMilliseconds(it)
        -> Disable PropertyMapping(DueTime) => #33
        ExternalizedMapping(GoSound(Category="Tone Properties")) => #34
        Source1=#29, Source1=#33, Source3=#34 -> SelectMany StimulusPresentation
            SubscribeSubject Threshold
            -> TrialResponse(Response=EarlyResponse)
            -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=EarlyResponse)
            -> BooleanProperty(Value=false) => #3
            ExternalizedMapping(DueTime(DisplayName="Early Response Penalty")) => #4
            #3, #4 -> Delay(DueTime=PT0S) => #5
            WorkflowInput Source1
            -> PublishSubject LaserOn
            -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Go) => #8
            ExternalizedMapping(SoundIndex(DisplayName=GoSound)) => #9
            #8, #9 -> IncludeWorkflow(Path=Extensions\PlaySound.bonsai, SoundIndex=12)
            -> MulticastSubject AllToneTick
            -> Disable Delay(DueTime=PT0.1S) => #12
            ExternalizedMapping(DueTime) => #13
            #12, #13 -> Delay(DueTime=PT0S)
            -> BooleanProperty(Value=true) => #15
            #15, #3 -> TakeUntil => #16
            #5, #16 -> Merge
            -> First
            -> WorkflowOutput
        -> Condition CompletedStimulus
            WorkflowInput Source1
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Go)
        -> Disable IncludeWorkflow(Path=Extensions\ClearOutput.bonsai, Mask=Digital0) => #38
        ExternalizedMapping(Value(DisplayName="Go Response Window (s)", Category="Response Window Settings"))
        -> FloatProperty(Value=1)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping("Go Response Window (s)") => #42
        ExternalizedMapping(Value(DisplayName="Pull Timeout", Category="Response Window Settings"))
        -> FloatProperty(Value=0.5)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime) => #46
        #38, #42, #46 -> SelectMany Move => #47
            SubscribeSubject PullThreshold
            -> IntProperty(Value=0)
            -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Timeout) => #2
            ExternalizedMapping(DueTime) => #3
            #2, #3 -> Delay(DueTime=PT0.5S) => #4
            SubscribeSubject Threshold
            -> IntProperty(Value=1) => #6
            #6, #2 -> TakeUntil => #7
            ExternalizedMapping(DueTime(DisplayName="Go Response Window (s)"))
            -> Timer(DueTime=PT1S, Period=PT0S)
            -> IntProperty(Value=2) => #10
            #10, #2 -> TakeUntil => #11
            #4, #7, #11 -> Merge
            -> First
            -> WorkflowOutput
        -> Condition Hit => #48
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        ExternalizedMapping("Pulse Period(ms)", RewardTone) => #49
        #48, #49 -> GroupWorkflow Reward
            WorkflowInput Source1 => #0
            ExternalizedMapping("Pulse Period(ms)"(Category="Solenoid Properties")) => #1
            #0, #1 -> GroupWorkflow A => #2
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName="Pulse Period(ms)")) => #1
                #0, #1 -> IntProperty(Value=50)
                -> Bonsai.Harp.CF.BehaviorCommand(Type=PulsePeriod, Mask=Poke0Valve)
                -> MulticastSubject Commands
                -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke0Valve)
                -> MulticastSubject Commands
                -> WorkflowOutput
            ExternalizedMapping(SoundIndex(DisplayName=RewardTone, Category="Tone Properties")) => #3
            #2, #3 -> IncludeWorkflow(Path=Extensions\PlaySound.bonsai, SoundIndex=50)
            -> WorkflowOutput
        -> TrialResponse(Response=Hit)
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Hit) => #52
        #47 -> Condition Miss
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=2))
            -> WorkflowOutput
        -> TrialResponse(Response=Miss)
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Miss) => #55
        #24 -> Condition NoGoTrial
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> Condition NotCatchTrial
            SubscribeSubject CatchTrial
            -> Equal(Operand=BooleanProperty(Value=false))
            -> WorkflowOutput
        -> AsyncSubject NoGo
        -> Disable IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=NoGo)
        -> Disable IncludeWorkflow(Path=Extensions\SetOutput.bonsai, Mask=Digital1) => #60
        ExternalizedMapping(NoGoSound(Category="Tone Properties")) => #61
        Source1=#33, Source1=#60, Source3=#61 -> SelectMany StimulusPresentation
            SubscribeSubject Threshold
            -> TrialResponse(Response=EarlyResponse)
            -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=EarlyResponse)
            -> BooleanProperty(Value=false) => #3
            ExternalizedMapping(SoundIndex(DisplayName=NoGoSound)) => #4
            WorkflowInput Source1
            -> PublishSubject LaserOn => #6
            #4, #6 -> IncludeWorkflow(Path=Extensions\PlaySound.bonsai, SoundIndex=10)
            -> MulticastSubject AllToneTick
            -> Disable Delay(DueTime=PT0.1S) => #9
            ExternalizedMapping(DueTime) => #10
            #9, #10 -> Delay(DueTime=PT0S)
            -> BooleanProperty(Value=true) => #12
            #3, #12 -> Merge
            -> First
            -> WorkflowOutput
        -> Condition CompletedStimulus
            WorkflowInput Source1
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=NoGo)
        -> Disable IncludeWorkflow(Path=Extensions\ClearOutput.bonsai, Mask=Digital1) => #65
        ExternalizedMapping(Value(DisplayName="NoGo Response Window (s)", Category="Response Window Settings"))
        -> FloatProperty(Value=1)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping("NoGo Response Window (s)") => #69
        #65, #69 -> SelectMany DontMove => #70
            SubscribeSubject NoGoThreshold
            -> DistinctUntilChanged
            -> PropertySource<StateTransition,StateId>(MemberName=Id, Value=Joystick)
            -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
            -> BooleanProperty(Value=false) => #4
            ExternalizedMapping(DueTime(DisplayName="NoGo Response Window (s)"))
            -> Timer(DueTime=PT1S, Period=PT0S)
            -> BooleanProperty(Value=true) => #7
            #4, #7 -> Merge
            -> First
            -> WorkflowOutput
        -> Condition CorrectRejection
            WorkflowInput Source1
            -> WorkflowOutput
        -> TrialResponse(Response=CorrectRejection)
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=CorrectRejection) => #73
        #70 -> Condition FalseAlarm
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Timeout) => #75
        ExternalizedMapping(MissTone, "Timeout Duration") => #76
        #75, #76 -> GroupWorkflow Penalty
            WorkflowInput Source1 => #0
            ExternalizedMapping(SoundIndex(DisplayName=MissTone, Category="Tone Properties")) => #1
            #0, #1 -> IncludeWorkflow(Path=Extensions\PlaySound.bonsai, SoundIndex=50) => #2
            ExternalizedMapping(Value(DisplayName="Timeout Duration", Category="Timeout Properties"))
            -> FloatProperty(Value=10)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime) => #6
            #2, #6 -> SelectMany FalseAlarmPenalty
                WorkflowInput Source1 => #0
                ExternalizedMapping(DueTime) => #1
                #0, #1 -> Delay(DueTime=PT10S)
                -> WorkflowOutput
            -> WorkflowOutput
        -> TrialResponse(Response=FalseAlarm)
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=FalseAlarm) => #79
        #47 -> Condition PullPenalty
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> TrialResponse(Response=PullPenalty)
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=PullPenalty) => #82
        #24 -> Condition CatchTrial
            SubscribeSubject CatchTrial
            -> WorkflowOutput
        -> SelectMany StimulusPresentation
            WorkflowInput Source1
            -> PublishSubject LaserOn
            -> Disable IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Go) => #2
            ExternalizedMapping(SoundIndex(DisplayName=CatchTrialSound)) => #3
            #2, #3 -> IncludeWorkflow(Path=Extensions\PlaySound.bonsai, SoundIndex=50)
            -> MulticastSubject AllToneTick
            -> Disable Delay(DueTime=PT0.1S) => #6
            ExternalizedMapping(DueTime) => #7
            #6, #7 -> Delay(DueTime=PT0S)
            -> BooleanProperty(Value=true)
            -> First
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=CatchTrial)
        -> SelectMany Move => #86
            SubscribeSubject PullThreshold
            -> IntProperty(Value=0)
            -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Timeout) => #2
            ExternalizedMapping(DueTime) => #3
            #2, #3 -> Delay(DueTime=PT0.5S) => #4
            SubscribeSubject Threshold
            -> IntProperty(Value=1) => #6
            #6, #2 -> TakeUntil => #7
            ExternalizedMapping(DueTime(DisplayName="Go Response Window (s)"))
            -> Timer(DueTime=PT1S, Period=PT0S)
            -> IntProperty(Value=2) => #10
            #10, #2 -> TakeUntil => #11
            #4, #7, #11 -> Merge
            -> First
            -> WorkflowOutput
        -> Condition Hit
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        -> TrialResponse(Response=CatchHit)
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=CatchHit) => #89
        #86 -> Condition Miss
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=2))
            -> WorkflowOutput
        -> TrialResponse(Response=CatchMiss)
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=CatchMiss) => #92
        #52, #55, #73, #79, #82, #89, #92 -> Merge
        -> FirstOrDefault
        -> WorkflowOutput

        SubscribeSubject Random
        -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=100)
        -> Bonsai.Numerics.Distributions.Sample => #98
        ExternalizedMapping(Value(DisplayName="Percentage Catch Trials")) => #99
        #98, #99 -> LessThan(Operand=DoubleProperty(Value=20))
        -> AsyncSubject CatchTrial

        WorkflowInput Source1

        SubscribeSubject Joystick => #103
        SubscribeSubject NoGo => #104
        #103, #104 -> SubscribeWhen => #105
        -> Take(Count=1) => #106
        #105, #106 -> CombineLatest
        -> Subtract
        -> Bonsai.Numerics.Abs => #109
        ExternalizedMapping(Value(DisplayName="NoGo Threshold")) => #110
        #109, #110 -> GreaterThan(Operand=DoubleProperty(Value=0.02))
        -> Condition Movement
            WorkflowInput Source1
            -> WorkflowOutput
        -> PublishSubject NoGoThreshold
    Disable SubscribeSubject StartTrigger => #23
    #22, #23 -> Disable SubscribeWhen => #24
    ExternalizedMapping(Count(DisplayName=NumberOfTrials, Category="Experiment Control")) => #25
    #24, #25 -> Take(Count=500)
    -> Concat
    -> MulticastSubject PreviousResponse
    -> PublishSubject ResponseStatistics => #29
    SubscribeSubject Path
    -> Add(Operand=StringProperty(Value=/ResponseStat.csv))
    -> PropertyMapping(FileName) => #32
    #29, #32 -> Bonsai.IO.CsvWriter
      FileName=C:\Users\SippylabJan\Desktop\BehaviorData/Shriya/AudLickTask_Day08/SP067_AudLickTask_Day08_2024-03-01T09-35-51/ResponseStat.csv
      Append=false
      Overwrite=false
      Suffix=None
      IncludeHeader=true
    -> Disable LastOrDefault
    -> Disable Delay(DueTime=PT1S)
    -> WorkflowOutput

    SubscribeSubject State
    -> IncludeWorkflow Timestamp(Path=Extensions\WithLatestTimestamp.bonsai)
    -> InputMapping(Id(Selector=Value), ElapsedTime(Selector=Timestamp)) => #39
    SubscribeSubject Trial
    -> PropertyMapping(Trial) => #41
    Source1=#39, Source1=#41 -> StateTransition(Trial=7, Id=ITI, ElapsedTime=16322912.028032) => #42
    -> SampleState
    -> StateStatistics
    -> PublishSubject TrialStatistics
    #42 -> DistinctUntilStateChanged => #46
    SubscribeSubject Path
    -> Add(Operand=StringProperty(Value=/GoTone_StateTransitions.csv))
    -> PropertyMapping(FileName) => #49
    #46, #49 -> Bonsai.IO.CsvWriter
      FileName=C:\Users\SippylabJan\Desktop\BehaviorData/Shriya/AudLickTask_Day08/SP067_AudLickTask_Day08_2024-03-01T09-35-51/GoTone_StateTransitions.csv
      Append=false
      Overwrite=false
      Suffix=None
      IncludeHeader=true

    SubscribeSubject Threshold
    -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Joystick)

    SubscribeSubject Lick
    -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Lick)

    Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=100)
    -> AsyncSubject TrialDistribution

    PropertySource<TrialResponse,ResponseId>(MemberName=Result, Value=Hit)
    -> BehaviorSubject PreviousResponse

    SubscribeSubject Sounds
    -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=U16, IsArray=false)) => #61
    SubscribeSubject Path
    -> Add(Operand=StringProperty(Value=/sounds.csv))
    -> PropertyMapping(FileName) => #64
    #61, #64 -> Bonsai.IO.CsvWriter
      FileName=C:\Users\SippylabJan\Desktop\BehaviorData/Shriya/AudLickTask_Day08/SP067_AudLickTask_Day08_2024-03-01T09-35-51/sounds.csv
      Append=false
      Overwrite=false
      Suffix=None
      IncludeHeader=false

    Disable IncludeWorkflow(Path=Extensions\SoftSoundCard.bonsai)
    Disable IncludeWorkflow(Path=Extensions\ManualCamera.bonsai)
    Disable IncludeWorkflow(Path=Extensions\HarpCamera.bonsai)

    PropertySource<StateTransition,StateId>(MemberName=Id, Value=Annotation)
    -> IgnoreElements
    -> BehaviorSubject Annotation

    SubscribeSubject Joystick => #72
    ExternalizedMapping(Value(DisplayName="ITI Lower Threshold", Category="Joystick Parameters"))
    -> FloatProperty(Value=-0.02)
    -> BehaviorSubject ITILower => #75
    #72, #75 -> CombineLatest
    -> LessThan => #77
    ExternalizedMapping(Value(DisplayName="ITI Upper Threshold", Category="Joystick Parameters"))
    -> FloatProperty(Value=0.02)
    -> BehaviorSubject ITIUpper => #80
    #72, #80 -> CombineLatest
    -> GreaterThan => #82
    #77, #82 -> Zip
    -> LogicalOr
    -> Condition Movement
        WorkflowInput Source1
        -> WorkflowOutput
    -> PublishSubject PenaltyThreshold

    SubscribeSubject Joystick => #87
    ExternalizedMapping(Value(DisplayName="Pull Threshold", Category="Joystick Parameters")) => #88
    #87, #88 -> LessThan(Operand=DoubleProperty(Value=-0.02))
    -> Condition Movement
        WorkflowInput Source1
        -> WorkflowOutput
    -> PublishSubject PullThreshold

    ExternalizedMapping(PortName(DisplayName="Behavior COMPort", Category="Experiment Control"))
    -> GroupWorkflow HarpJoystick
        SubscribeSubject Commands => #0
        ExternalizedMapping(PortName) => #1
        #0, #1 -> Bonsai.Harp.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM3) => #2
        -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=Timestamp, IsArray=false))
        -> PublishSubject Timestamp
        #2 -> Bonsai.Harp.CF.BehaviorEvent(Type=QuadratureCounter, Mask=Port2)
        -> PublishSubject Touch
        #2 -> Bonsai.Harp.CF.BehaviorEvent(Type=AnalogInput, Mask=Port1)
        -> PublishSubject Joystick
        #2 -> Bonsai.Harp.CF.BehaviorEvent(Type=Input, Mask=Poke1InfraRedBeam)
        -> PublishSubject Reward
        #2 -> Bonsai.Harp.CF.BehaviorEvent(Type=RegisterInputs, Mask=Port1)
        -> PublishSubject StartTrigger
        #2 -> MemberSelector(Selector=MessageBytes) => #13
        SubscribeSubject Path
        -> Add(Operand=StringProperty(Value=/Joystick.bin))
        -> PropertyMapping(Path) => #16
        #13, #16 -> Bonsai.Dsp.MatrixWriter
          Path=C:\Users\SippylabJan\Desktop\BehaviorData/Shriya/AudLickTask_Day08/SP067_AudLickTask_Day08_2024-03-01T09-35-51/Joystick.bin
          Suffix=None
          Overwrite=false
          Layout=ColumnMajor

        Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=32, PayloadType=U8, Payload=0)
        -> IgnoreElements
        -> BehaviorSubject Commands

        SubscribeSubject Touch
        -> Bonsai.Numerics.Abs
        -> GreaterThan(Operand=DoubleProperty(Value=0.015))
        -> DistinctUntilChanged
        -> Condition TouchDetect
            WorkflowInput Source1
            -> WorkflowOutput
        -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
        -> PublishSubject Lick

    ExternalizedMapping(PortName(DisplayName="Soundcard COMPort", Category="Experiment Control"))
    -> GroupWorkflow HarpSoundCard
        SubscribeSubject Sounds => #0
        ExternalizedMapping(PortName) => #1
        #0, #1 -> Bonsai.Harp.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM4)
        -> MemberSelector(Selector=MessageBytes) => #3
        SubscribeSubject Path
        -> Add(Operand=StringProperty(Value=/soundcard.bin))
        -> PropertyMapping(Path) => #6
        #3, #6 -> Bonsai.Dsp.MatrixWriter
          Path=C:\Users\SippylabJan\Desktop\BehaviorData/Shriya/AudLickTask_Day08/SP067_AudLickTask_Day08_2024-03-01T09-35-51/soundcard.bin
          Suffix=None
          Overwrite=false
          Layout=ColumnMajor

        Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=32, PayloadType=U8, Payload=0)
        -> IgnoreElements
        -> BehaviorSubject Sounds

    BehaviorSubject<Bonsai.Harp.HarpMessage> AllToneTick
    Disable IncludeWorkflow(Path=Extensions\SoftJoystick.bonsai)

    Bonsai.Windows.Input.KeyDown(Filter="LButton A Shift", SuppressRepetitions=false)
    -> GroupWorkflow PulseValve
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value(DisplayName="Pulse Period(ms)")) => #1
        #0, #1 -> IntProperty(Value=20)
        -> Bonsai.Harp.CF.BehaviorCommand(Type=PulsePeriod, Mask=Poke0Valve)
        -> MulticastSubject Commands
        -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke0Valve)
        -> MulticastSubject Commands
        -> WorkflowOutput
    -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Annotation)

    SubscribeSubject TaskParameters

Disable GroupWorkflow CameraVisualizer
    SubscribeSubject Camera => #0
    ExternalizedMapping(Value(DisplayName=VisualizerFramerate))
    -> FloatProperty(Value=20)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromSeconds(1/it)
    -> PropertyMapping(Interval) => #4
    #0, #4 -> GateInterval(Interval=PT0.05S)
    -> WorkflowOutput

ExternalizedMapping(Index(DisplayName="Camera Index", Category="Camera Settings"))
-> Disable Bonsai.Vision.CameraCapture(Index=0, CaptureProperties="") => #5
ExternalizedMapping(FileName(DisplayName="Video File Name", Category="Camera Settings")) => #6
#5, #6 -> Disable Bonsai.Vision.VideoWriter
  FileName=RawVideo
  Suffix=Timestamp
  Buffered=true
  Overwrite=false
  FourCC=FMP4
  FrameRate=30
  FrameSize(Width=0, Height=0)
  ResizeInterpolation=NearestNeighbor

SubscribeSubject Joystick => #8
-> Visualizer
    WorkflowInput Source1
    -> WorkflowOutput
SubscribeSubject Timestamp => #10
#10, #8 -> CombineLatest => #11
SubscribeSubject Path
-> Add(Operand=StringProperty(Value=/JoystickTrace.csv))
-> PropertyMapping(FileName) => #14
#11, #14 -> Bonsai.IO.CsvWriter
  FileName=C:\Users\SippylabJan\Desktop\BehaviorData/Shriya/AudLickTask_Day08/SP067_AudLickTask_Day08_2024-03-01T09-35-51/JoystickTrace.csv
  Append=false
  Overwrite=false
  Suffix=None
  IncludeHeader=false

Disable SubscribeSubject Path
-> Disable Add(Operand=StringProperty(Value=\Weight.csv))
-> Disable PropertyMapping(FileName) => #18
Disable ExternalizedMapping(Value(DisplayName=StartingWeight))
-> Disable FloatProperty(Value=31) => #20
Disable ExternalizedMapping(Value(DisplayName=Weight))
-> Disable FloatProperty(Value=23.6) => #22
#20, #22 -> Disable CombineLatest => #23
#18, #23 -> Disable Bonsai.IO.CsvWriter
  FileName=C:\Users\SippylabJan\Desktop\BehaviorData\GoNoGoTask/JK103/Pretraining_2022-08-24T11-09-41\Weight.csv
  Append=false
  Overwrite=false
  Suffix=Timestamp
  IncludeHeader=false

ExternalizedMapping(DataPath, ExperimenterId, SubjectId, ExperimentName)
-> IncludeWorkflow
  Path=Extensions\SessionMetadata.bonsai
  DataPath=C:\Users\SippylabJan\Desktop\BehaviorData
  ExperimenterId=Shriya
  SubjectId=SP067
  ExperimentName=AudLickTask_Day08

SubscribeSubject Timestamp => #27
SubscribeSubject Touch => #28
#27, #28 -> CombineLatest => #29
SubscribeSubject Path
-> Add(Operand=StringProperty(Value=/LickTrace.csv))
-> PropertyMapping(FileName) => #32
#29, #32 -> Bonsai.IO.CsvWriter
  FileName=C:\Users\SippylabJan\Desktop\BehaviorData/Shriya/AudLickTask_Day08/SP067_AudLickTask_Day08_2024-03-01T09-35-51/LickTrace.csv
  Append=false
  Overwrite=false
  Suffix=None
  IncludeHeader=false

Bonsai.Video.VideoCaptureDevice
  Index=0
  Format(FrameSize(Width=800, Height=600), AverageFrameRate=60, MaximumFrameRate=60, BitCount=24)
  CaptureProperties(CameraProperty(Property=Exposure, Value=-5, ControlFlags=Auto), CameraProperty(Property=Focus, Value=0, ControlFlags=Auto))
-> PublishSubject Video => #35
SubscribeSubject SessionMetadata
-> Format(Format={0}\{1}_{2}_{3:yyyy-MM-ddTHH-mm-ss}.avi, Selector="Path,Metadata.Value.SubjectId,Metadata.Value.ExperimentName,Metadata.Timestamp")
-> PropertyMapping(FileName) => #38
#35, #38 -> Bonsai.Vision.VideoWriter
  FileName: C:\Users\SippylabJan\Desktop\BehaviorData/Shriya/AudLickTask_Day08/SP067_AudLickTask_Day08_2024-03-01T09-35-51\SP067_AudLickTask_Day08_2024-03-01T09-35-51.avi
  Suffix=None
  Buffered=true
  Overwrite=false
  FourCC=FMP4
  FrameRate=30
  FrameSize(Width=0, Height=0)
  ResizeInterpolation=NearestNeighbor
-> IncludeWorkflow Timestamp(Path=Extensions\WithLatestTimestamp.bonsai) => #40
SubscribeSubject Path
-> Add(Operand=StringProperty(Value=/VideoTimestamps.csv))
-> PropertyMapping(FileName) => #43
#40, #43 -> Bonsai.IO.CsvWriter
  FileName=C:\Users\SippylabJan\Desktop\BehaviorData/Shriya/AudLickTask_Day08/SP067_AudLickTask_Day08_2024-03-01T09-35-51/VideoTimestamps.csv
  Append=false
  Overwrite=false
  Suffix=None
  IncludeHeader=false

SubscribeSubject StartTrigger
-> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Blink)

ReadAllText(Path=2p_GoTone_modifiedLickTask.yml)
-> ModifiedGoNoGoTask.DeserializeFromYaml(Type=TypeMapping<ModifiedGoNoGoTask.ModifiedGoNoGoTask>)
-> BehaviorSubject TaskParameters

SubscribeSubject TaskParameters
-> ModifiedGoNoGoTask.SerializeToYaml => #51
SubscribeSubject Path
-> Add(Operand=StringProperty(Value=/TaskParameters.yml))
-> PropertyMapping(Path) => #54
#51, #54 -> WriteAllText(Path=C:\Users\SippylabJan\Desktop\BehaviorData/Shriya/AudLickTask_Day08/SP067_AudLickTask_Day08_2024-03-01T09-35-51/TaskParameters.yml)

Bonsai.Numerics.CreateRandom(Seed=nil)
-> AsyncSubject Random

SubscribeSubject TrialStatistics
-> VisualizerMapping => #59
GroupWorkflow ResponseStatistics
    SubscribeSubject ResponseStatistics
    -> Disable GroupWorkflow SlidingBuffer
        WorkflowInput Source1 => #0
        ExternalizedMapping(Count) => #1
        #0, #1 -> BufferCount(Count=20, Skip=1) => #2
        #0, #1 -> Take(Count=20)
        -> IncrementalBuffer => #4
        #2, #4 -> Merge
        -> WorkflowOutput
    -> ResponseStatistics
    -> WorkflowOutput
-> VisualizerMapping(VisualizerType=TypeMapping<ResponseVisualizer>) => #61
GroupWorkflow JoystickVisualizer
    SubscribeSubject Joystick
    -> GroupWorkflow Downsampling
        WorkflowInput Source1 => #0
        ExternalizedMapping(Factor) => #1
        #0, #1 -> GroupWorkflow Buffer => #2
            WorkflowInput Source1 => #0
            ExternalizedMapping(Count(DisplayName=Factor, Description="The integral factor by which to divide the sampling rate of the input signal.")) => #1
            #0, #1 -> Bonsai.Dsp.Buffer(Count=20, Skip=nil)
            -> WorkflowOutput
        #1 -> GroupWorkflow KernelLength
            ExternalizedMapping(Value(DisplayName=Factor, Description="The integral factor by which to divide the sampling rate of the input signal."))
            -> PropertySource<Bonsai.Dsp.Decimate,System.Int32>(MemberName=KernelLength, Value=20)
            -> Divide(Operand=IntProperty(Value=2))
            -> WorkflowOutput
        -> PropertyMapping(KernelLength) => #4
        #2, #1, #4 -> Bonsai.Dsp.Decimate(Downsampling=LowPass, BufferLength=1, Factor=20, SampleRate=1000, KernelLength=10)
        -> Index(Operand=IntProperty(Value=0))
        -> MemberSelector(Selector=Val0)
        -> WorkflowOutput
    -> GroupWorkflow WithTrialTimestamp
        WorkflowInput Source1 => #0
        ExternalizedMapping(Name)
        -> SubscribeSubject Timestamp => #2
        -> Take(Count=1) => #3
        #2, #3 -> CombineLatest
        -> Subtract => #5
        #0, #5 -> WithLatestFrom => #6
        SubscribeSubject JoystickThreshold => #7
        SubscribeSubject ITIUpper => #8
        SubscribeSubject ITILower => #9
        DoubleProperty(Value=0)
        -> First => #11
        SubscribeSubject ToneTick => #12
        SubscribeSubject JoystickThreshold
        -> PropertyMapping(Value) => #14
        #12, #14 -> DoubleProperty(Value=0.019999999552965164)
        -> First => #16
        #11, #16 -> Concat
        -> Repeat => #18
        #6, #7, #8, #9, #18 -> CombineLatest
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1.Item2 as Timestamp,
            Item1.Item1 as Value,
            Item2 as Threshold,
            Item3 as ITIUpper,
            Item4 as ITILower,
            Item5 as NoGoToneTick)
        -> WorkflowOutput

        SubscribeSubject AllToneTick
        -> PublishSubject ToneTick
    -> Bonsai.Design.Visualizers.RollingGraphBuilder(IndexSelector=Timestamp, ValueSelector="Value,Threshold,ITIUpper,ITILower,NoGoToneTick", SymbolType=None, LineWidth=1, Capacity=1000, Min=nil, Max=nil)
    -> WorkflowOutput
-> VisualizerMapping => #63
SubscribeSubject Video
-> VisualizerMapping => #65
#59, #61, #63, #65 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder(ColumnCount=2, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
