<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:Bonsai.Harp.CF;assembly=Bonsai.Harp.CF"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="SubscribeSubject">
        <Name>StartTrigger</Name>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>Start</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="p1:BehaviorCommand">
        <p1:Type>StartCamera</p1:Type>
        <p1:Mask>Digital0</p1:Mask>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Commands</Name>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>Stop</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="BitwiseNot" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="p1:BehaviorCommand">
        <p1:Type>StopCamera</p1:Type>
        <p1:Mask>Digital0</p1:Mask>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Commands</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="spk:SpinnakerCapture">
          <spk:Index>0</spk:Index>
          <spk:ColorProcessing>Default</spk:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Sink">
        <Name>LogMetadata</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>ChunkData.FrameID,ChunkData.Timestamp</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(
item1.item1 - item2.item1 as FrameID,
item1.item2 - item2.item2 as Timestamp
)</scr:Expression>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>Data/videolog.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>Timestamp</io:Suffix>
              <io:IncludeHeader>true</io:IncludeHeader>
              <io:Selector>FrameID,Timestamp</io:Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>Data/videolog.avi</cv:FileName>
          <cv:Suffix>Timestamp</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>30</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Camera</Name>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="0" To="4" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>