<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="SubscribeSubject">
        <Name>Joystick</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="num:Abs" />
      </Expression>
      <Expression xsi:type="GreaterThan">
        <Operand xsi:type="DoubleProperty">
          <Value>10</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:DistinctUntilChanged" />
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>Movement</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="PropertySource" TypeArguments="p1:StateTransition,p1:StateId">
        <MemberName>Id</MemberName>
        <Value>Joystick</Value>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Bonsai.Harp:WithLatestTimestamp.bonsai">
        <Name>Timestamp</Name>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Threshold</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Joystick</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Difference">
          <dsp:Order>1</dsp:Order>
        </Combinator>
      </Expression>
      <Expression xsi:type="GreaterThan">
        <Operand xsi:type="DoubleProperty">
          <Value>0</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:DistinctUntilChanged" />
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>Movement</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="PropertySource" TypeArguments="p1:StateTransition,p1:StateId">
        <MemberName>Id</MemberName>
        <Value>Joystick</Value>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Bonsai.Harp:WithLatestTimestamp.bonsai">
        <Name>Timestamp</Name>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>NoGoThreshold</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>