<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="SubscribeSubject">
        <Name>Joystick</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SampleInterval">
          <rx:Interval>PT0.02S</rx:Interval>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>TrialGraph - Time (sec)</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="rx:Visualizer">
              <Name>TrialGraph</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>WithTrialTimestamp</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Name" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Timestamp</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:CombineLatest" />
                        </Expression>
                        <Expression xsi:type="Subtract" />
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Expression>new(
Item2 as Timestamp,
Item1 as Value)</scr:Expression>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Trial</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:DelaySubscription">
                            <rx:DueTime>PT0.5S</rx:DueTime>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Skip">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:DistinctUntilChanged" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:TakeUntil" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Repeat" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="6" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="2" To="4" Label="Source1" />
                        <Edge From="3" To="4" Label="Source2" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source2" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="12" Label="Source1" />
                        <Edge From="8" To="9" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="11" To="12" Label="Source2" />
                        <Edge From="12" To="13" Label="Source1" />
                        <Edge From="13" To="14" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>TrialData</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Timestamp</Selector>
                        </Expression>
                        <Expression xsi:type="rx:Scan">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Accumulation,Value</Selector>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="num:Max" />
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="rx:SelectMany">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="scr:ExpressionTransform">
                                <scr:Expression>new(
Item1.Timestamp as X,
Double(Item1.Value) as Y)</scr:Expression>
                              </Expression>
                              <Expression xsi:type="scr:ExpressionTransform">
                                <scr:Expression>new(
Item1.Timestamp as X,
0.0 as Y)</scr:Expression>
                              </Expression>
                              <Expression xsi:type="scr:ExpressionTransform">
                                <scr:Expression>new(
Item2 as X,
0.0 as Y)</scr:Expression>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Merge" />
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>X,Y</Selector>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:ToArray" />
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="0" To="2" Label="Source1" />
                              <Edge From="0" To="3" Label="Source1" />
                              <Edge From="1" To="4" Label="Source1" />
                              <Edge From="2" To="4" Label="Source2" />
                              <Edge From="3" To="4" Label="Source3" />
                              <Edge From="4" To="5" Label="Source1" />
                              <Edge From="5" To="6" Label="Source1" />
                              <Edge From="6" To="7" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Trial</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:DistinctUntilChanged" />
                        </Expression>
                        <Expression xsi:type="rx:SelectMany">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="scr:ExpressionTransform">
                                <scr:Expression>new(
0.0 as X,
0.0 as Y)</scr:Expression>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>X,Y</Selector>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:IgnoreElements" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:ToArray" />
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="5" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="0" To="3" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source2" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="8" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source2" />
                        <Edge From="8" To="9" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>