<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:p2="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:p3="clr-namespace:Bonsai.Harp.CF;assembly=Bonsai.Harp.CF"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>-1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:IgnoreElements" />
        </Builder>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Trial</Name>
      </Expression>
      <Expression xsi:type="PropertySource" TypeArguments="p1:StateTransition,p1:StateId">
        <MemberName>Id</MemberName>
        <Value>ITI</Value>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:IgnoreElements" />
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>State</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Joystick</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="num:Abs" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="Joystick Threshold" Category="Joystick Properties" />
      </Expression>
      <Expression xsi:type="GreaterThan">
        <Operand xsi:type="DoubleProperty">
          <Value>10</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:DistinctUntilChanged" />
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>Movement</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="PropertySource" TypeArguments="p1:StateTransition,p1:StateId">
        <MemberName>Id</MemberName>
        <Value>Joystick</Value>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Bonsai.Harp:WithLatestTimestamp.bonsai">
        <Name>Timestamp</Name>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Threshold</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Joystick</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Difference">
          <dsp:Order>1</dsp:Order>
        </Combinator>
      </Expression>
      <Expression xsi:type="GreaterThan">
        <Operand xsi:type="DoubleProperty">
          <Value>0</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>Movement</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>NoGoThreshold</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>PreviousResponse</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:DelaySubscription">
          <rx:DueTime>PT0.001S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="NoGoSound" DisplayName="NoGo Tone" Category="Tone Properties" />
        <Property Name="GoSound" DisplayName="Go Tone" Category="Tone Properties" />
        <Property Name="RewardTone" DisplayName="Reward Tone" Category="Tone Properties" />
        <Property Name="MissTone" DisplayName="Miss Tone" Category="Tone Properties" />
        <Property Name="Lower Bound ITI Duration " />
        <Property Name="Upper Bound ITI Duration" />
        <Property Name="Response Delay (ms)" Category="Response Timeout" />
        <Property Name="Go Response Window (s)" Category="Joystick Properties" />
        <Property Name="NoGo Response Window (s)" Category="Joystick Properties" />
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>CreateTrial</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>TrialDistribution</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:Sample" />
            </Expression>
            <Expression xsi:type="rx:Sink">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Trial</Name>
                  </Expression>
                  <Expression xsi:type="Add">
                    <Operand xsi:type="IntProperty">
                      <Value>1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Trial</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\LogState.bonsai">
              <Id>ITI</Id>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Lower" DisplayName="Lower Bound ITI Duration " Category="ITI Duration (sec)" />
              <Property Name="Upper" DisplayName="Upper Bound ITI Duration" Category="ITI Duration (sec)" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:CreateContinuousUniform">
                <p2:Lower>2</p2:Lower>
                <p2:Upper>4</p2:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:Sample" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT2.385S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>NoGoThreshold</Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>DummyInitialValue</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="DoubleProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:First" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Concat" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Throttle">
                      <rx:DueTime>PT2S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="1" To="8" Label="Source1" />
                  <Edge From="2" To="5" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="3" To="7" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="9" Label="Source1" />
                  <Edge From="7" To="9" Label="Source2" />
                  <Edge From="8" To="9" Label="Source3" />
                  <Edge From="9" To="10" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>ReadyToGo</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>GoTrial</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\LogState.bonsai">
              <Id>Go</Id>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="IncludeWorkflow" Path="Extensions\SetOutput.bonsai">
                <Mask>Digital0</Mask>
              </Builder>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Response Delay (ms)" Category="Response Window Settings" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>TimeSpan.FromMilliseconds(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="GoSound" />
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>StimulusPresentation</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Threshold</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="SoundIndex" DisplayName="GoSound" />
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\PlaySound.bonsai">
                    <SoundIndex>2</SoundIndex>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT0.1S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="DueTime" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT0.001S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:First" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="9" Label="Source1" />
                  <Edge From="2" To="4" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="7" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source2" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>CompletedStimulus</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\LogState.bonsai">
              <Id>Response</Id>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="IncludeWorkflow" Path="Extensions\ClearOutput.bonsai">
                <Mask>Digital0</Mask>
              </Builder>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Go Response Window (s)" />
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>Move</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Threshold</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="DueTime" DisplayName="Go Response Window (s)" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timer">
                      <rx:DueTime>PT3S</rx:DueTime>
                      <rx:Period>PT0S</rx:Period>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:First" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="5" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>Hit</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>PulseValve</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Pulse Period(ms)" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>15</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="p3:BehaviorCommand">
                    <p3:Type>PulsePeriod</p3:Type>
                    <p3:Mask>Poke1Valve</p3:Mask>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Commands</Name>
                  </Expression>
                  <Expression xsi:type="p3:BehaviorCommand">
                    <p3:Type>SetOutput</p3:Type>
                    <p3:Mask>Poke1Valve</p3:Mask>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Commands</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="SoundIndex" DisplayName="RewardTone" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\PlaySound.bonsai">
              <SoundIndex>2</SoundIndex>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:TrialResponse">
                <p1:Response>Hit</p1:Response>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\LogState.bonsai">
              <Id>Hit</Id>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>Miss</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="SoundIndex" DisplayName="MissTone" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\PlaySound.bonsai">
              <SoundIndex>3</SoundIndex>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:TrialResponse">
                <p1:Response>Miss</p1:Response>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\LogState.bonsai">
              <Id>Miss</Id>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>NoGoTrial</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\LogState.bonsai">
              <Id>NoGo</Id>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="IncludeWorkflow" Path="Extensions\SetOutput.bonsai">
                <Mask>Digital1</Mask>
              </Builder>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="NoGoSound" />
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>StimulusPresentation</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Threshold</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="SoundIndex" DisplayName="NoGoSound" />
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\PlaySound.bonsai">
                    <SoundIndex>3</SoundIndex>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT0.1S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="DueTime" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT0.001S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:First" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="9" Label="Source1" />
                  <Edge From="2" To="4" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="7" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source2" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>CompletedStimulus</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\LogState.bonsai">
              <Id>Response</Id>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="IncludeWorkflow" Path="Extensions\ClearOutput.bonsai">
                <Mask>Digital1</Mask>
              </Builder>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="NoGo Response Window (s)" />
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>DontMove</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>NoGoThreshold</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:DistinctUntilChanged" />
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="p1:StateTransition,p1:StateId">
                    <MemberName>Id</MemberName>
                    <Value>Joystick</Value>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Bonsai.Harp:WithLatestTimestamp.bonsai">
                    <Name>Timestamp</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="DueTime" DisplayName="NoGo Response Window (s)" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timer">
                      <rx:DueTime>PT3S</rx:DueTime>
                      <rx:Period>PT0S</rx:Period>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:First" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="8" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source2" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>CorrectRejection</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\PlaySound.bonsai">
              <SoundIndex>2</SoundIndex>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:TrialResponse">
                <p1:Response>CorrectRejection</p1:Response>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\LogState.bonsai">
              <Id>CorrectRejection</Id>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>FalseAlarm</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\PlaySound.bonsai">
              <SoundIndex>3</SoundIndex>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\LogState.bonsai">
              <Id>Timeout</Id>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT3S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:TrialResponse">
                <p1:Response>FalseAlarm</p1:Response>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\LogState.bonsai">
              <Id>FalseAlarm</Id>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:FirstOrDefault" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="9" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="12" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source2" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="16" To="42" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="25" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="25" Label="Source1" />
            <Edge From="23" To="46" Label="Source1" />
            <Edge From="24" To="25" Label="Source3" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="30" Label="Source1" />
            <Edge From="29" To="30" Label="Source2" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="30" To="37" Label="Source1" />
            <Edge From="31" To="32" Label="Source1" />
            <Edge From="32" To="34" Label="Source1" />
            <Edge From="33" To="34" Label="Source2" />
            <Edge From="33" To="53" Label="Source2" />
            <Edge From="34" To="35" Label="Source1" />
            <Edge From="35" To="36" Label="Source1" />
            <Edge From="36" To="62" Label="Source1" />
            <Edge From="37" To="39" Label="Source1" />
            <Edge From="38" To="39" Label="Source2" />
            <Edge From="38" To="57" Label="Source2" />
            <Edge From="39" To="40" Label="Source1" />
            <Edge From="40" To="41" Label="Source1" />
            <Edge From="41" To="62" Label="Source2" />
            <Edge From="42" To="43" Label="Source1" />
            <Edge From="43" To="44" Label="Source1" />
            <Edge From="44" To="46" Label="Source1" />
            <Edge From="45" To="46" Label="Source3" />
            <Edge From="46" To="47" Label="Source1" />
            <Edge From="47" To="48" Label="Source1" />
            <Edge From="48" To="49" Label="Source1" />
            <Edge From="49" To="51" Label="Source1" />
            <Edge From="50" To="51" Label="Source2" />
            <Edge From="51" To="52" Label="Source1" />
            <Edge From="51" To="56" Label="Source1" />
            <Edge From="52" To="53" Label="Source1" />
            <Edge From="53" To="54" Label="Source1" />
            <Edge From="54" To="55" Label="Source1" />
            <Edge From="55" To="62" Label="Source3" />
            <Edge From="56" To="57" Label="Source1" />
            <Edge From="57" To="58" Label="Source1" />
            <Edge From="58" To="59" Label="Source1" />
            <Edge From="59" To="60" Label="Source1" />
            <Edge From="60" To="61" Label="Source1" />
            <Edge From="61" To="62" Label="Source4" />
            <Edge From="62" To="63" Label="Source1" />
            <Edge From="63" To="64" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>StartTrigger</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:SubscribeWhen" />
        </Builder>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Count" DisplayName="Number of Trials" Category="Experiment Control" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>100</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>PreviousResponse</Name>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>ResponseStatistics</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Path</Name>
      </Expression>
      <Expression xsi:type="Add">
        <Operand xsi:type="StringProperty">
          <Value>/ResponseStat.csv</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>Data\Test\2020-09-29T13-40-54/ResponseStat.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:LastOrDefault" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Delay">
            <rx:DueTime>PT1S</rx:DueTime>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="SubscribeSubject">
        <Name>State</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\WithLatestTimestamp.bonsai">
        <Name>Timestamp</Name>
      </Expression>
      <Expression xsi:type="InputMapping">
        <PropertyMappings>
          <Property Name="Id" Selector="Value" />
          <Property Name="ElapsedTime" Selector="Timestamp" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Trial</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Trial" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:StateTransition">
          <p1:Trial>1</p1:Trial>
          <p1:Id>Response</p1:Id>
          <p1:ElapsedTime>4147719.759008</p1:ElapsedTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Threshold</Name>
      </Expression>
      <Expression xsi:type="InputMapping">
        <PropertyMappings>
          <Property Name="Id" Selector="Value" />
          <Property Name="ElapsedTime" Selector="Timestamp" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:StateTransition">
          <p1:Trial>1</p1:Trial>
          <p1:Id>Joystick</p1:Id>
          <p1:ElapsedTime>4147645.902016</p1:ElapsedTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Lick</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Bonsai.Harp:WithLatestTimestamp.bonsai">
        <Name>Timestamp</Name>
      </Expression>
      <Expression xsi:type="InputMapping">
        <PropertyMappings>
          <Property Name="ElapsedTime" Selector="Timestamp" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Trial</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Trial" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:StateTransition">
          <p1:Trial>1</p1:Trial>
          <p1:Id>Lick</p1:Id>
          <p1:ElapsedTime>6218.091072</p1:ElapsedTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:SampleState" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:StateStatistics" />
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>TrialStatistics</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:DistinctUntilStateChanged" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Path</Name>
      </Expression>
      <Expression xsi:type="Add">
        <Operand xsi:type="StringProperty">
          <Value>/StateTransitions.csv</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>Data\Test\2020-09-29T13-40-54/StateTransitions.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="num:CreateRandom">
          <num:Seed xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p2:CreateDiscreteUniform">
          <p2:Lower>0</p2:Lower>
          <p2:Upper>1</p2:Upper>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:AsyncSubject">
        <Name>TrialDistribution</Name>
      </Expression>
      <Expression xsi:type="PropertySource" TypeArguments="p1:TrialResponse,p1:ResponseId">
        <MemberName>Result</MemberName>
        <Value>Hit</Value>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>PreviousResponse</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Sounds</Name>
      </Expression>
      <Expression xsi:type="harp:Parse">
        <harp:Register xsi:type="harp:ParseMessagePayload">
          <harp:PayloadType>U16</harp:PayloadType>
          <harp:IsArray>false</harp:IsArray>
        </harp:Register>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Path</Name>
      </Expression>
      <Expression xsi:type="Add">
        <Operand xsi:type="StringProperty">
          <Value>/sounds.csv</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>Data\Test\2020-09-29T13-40-54/sounds.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\HarpCamera.bonsai" />
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="Extensions\ManualCamera.bonsai" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="Path" Category="Experiment Control" />
      </Expression>
      <Expression xsi:type="PropertySource" TypeArguments="io:EnumerateFiles,sys:String">
        <MemberName>Path</MemberName>
        <Value>Data\Test</Value>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="Format">
        <Format>{0}\{1:yyyy-MM-ddTHH-mm-ss}</Format>
        <Selector>Value,Timestamp</Selector>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Path</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\HarpSoundCard.bonsai" />
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\HarpJoystick.bonsai" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="9" Label="Source1" />
      <Edge From="8" To="9" Label="Source2" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="23" Label="Source1" />
      <Edge From="22" To="23" Label="Source2" />
      <Edge From="23" To="25" Label="Source1" />
      <Edge From="24" To="25" Label="Source2" />
      <Edge From="25" To="27" Label="Source1" />
      <Edge From="26" To="27" Label="Source2" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="34" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="33" To="34" Label="Source2" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="36" To="37" Label="Source1" />
      <Edge From="38" To="39" Label="Source1" />
      <Edge From="39" To="40" Label="Source1" />
      <Edge From="40" To="43" Label="Source1" />
      <Edge From="41" To="42" Label="Source1" />
      <Edge From="42" To="43" Label="Source1" />
      <Edge From="42" To="46" Label="Source2" />
      <Edge From="43" To="53" Label="Source1" />
      <Edge From="44" To="45" Label="Source1" />
      <Edge From="45" To="46" Label="Source1" />
      <Edge From="46" To="53" Label="Source2" />
      <Edge From="47" To="48" Label="Source1" />
      <Edge From="48" To="49" Label="Source1" />
      <Edge From="49" To="52" Label="Source1" />
      <Edge From="50" To="51" Label="Source1" />
      <Edge From="51" To="52" Label="Source2" />
      <Edge From="52" To="53" Label="Source3" />
      <Edge From="53" To="54" Label="Source1" />
      <Edge From="53" To="57" Label="Source1" />
      <Edge From="54" To="55" Label="Source1" />
      <Edge From="55" To="56" Label="Source1" />
      <Edge From="57" To="61" Label="Source1" />
      <Edge From="58" To="59" Label="Source1" />
      <Edge From="59" To="60" Label="Source1" />
      <Edge From="60" To="61" Label="Source2" />
      <Edge From="62" To="63" Label="Source1" />
      <Edge From="63" To="64" Label="Source1" />
      <Edge From="65" To="66" Label="Source1" />
      <Edge From="67" To="68" Label="Source1" />
      <Edge From="68" To="72" Label="Source1" />
      <Edge From="69" To="70" Label="Source1" />
      <Edge From="70" To="71" Label="Source1" />
      <Edge From="71" To="72" Label="Source2" />
      <Edge From="75" To="76" Label="Source1" />
      <Edge From="76" To="77" Label="Source1" />
      <Edge From="77" To="78" Label="Source1" />
      <Edge From="78" To="79" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>